PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age': '', 'handness': "['right', 'left']", 'gender': "['female', 'male']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Continuum_BA
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instr1
    RoutineSettingsComponent instr1
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      desc:
        使用位置来区分不同组件：
        垂直方向：top / center / bottom

        水平方向：left / center / right
    TextComponent instr1_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, 0.18)
      startVal [time (s)] = 0.0
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      text:
        情绪识别实验指导语
    TextComponent instr1_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
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      text:
        您好，欢迎参加本实验！

        这是一个情绪识别实验，您一共需要完成2个任务，

        整个实验过程大约需要40分钟，

        请您仔细阅读后面的指导语。

        按“空格”键查看更多说明
    KeyboardComponent instr1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr2
    RoutineSettingsComponent instr2
      saveStartStop = False
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    TextComponent instr2_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        情绪表达往往是复杂和微妙的，很少是绝对单一的情绪。

        就像音量调节一样，我们很少将音量调到绝对的"开"或"关"，

        而是根据需要在两个极端之间连续调节。

        同样地，真实生活中的情绪表达也很少是极端的纯开心或纯悲伤，

        而是存在着丰富的程度差异。

        一个人可能同时带着一丝忧伤的微笑，或者在开心中夹杂着一点担忧。

        正是这种程度上的连续变化，让人类的情绪表达如此细腻和真实。


        按“空格”键继续
    KeyboardComponent instr2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr3
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    TextComponent instr3_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        在第一个任务中，

        我们想了解人们是如何感知这种连续变化的情绪程度的。

        在任务中，屏幕上会依次呈现一系列人物面孔图片，

        【您的任务】：在每张面孔出现后，评估每张面孔的情绪程度。


        按“空格”键继续
    KeyboardComponent instr3_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr4
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    TextComponent instr4_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, 0.4)
      startVal [time (s)] = 0.0
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      text:
        【评估方式】：如下所示，您将使用一条代表情绪变化的水平直线进行评估
    TextComponent instr4_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
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      text:
        【操作方式】：

        直线左端代表100%开心（0%悲伤），即“完全开心，没有一点悲伤”，

        直线右端代表100%悲伤（0%开心），即“完全悲伤，没有一点开心”,

        直线的中间代表两种情绪不同程度的混合，

        请用鼠标在直线上点击，来表示您认为该面孔的情绪程度。
    TextComponent instr4_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    TextComponent instr4_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        100%开心
        (0%悲伤)
    TextComponent instr4_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
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      text:
        100%悲伤
        (0%开心)
    SliderComponent instr4_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0,1]
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    MouseComponent instr4_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    KeyboardComponent instr4_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr4_code
      Code Type = Auto->JS
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      Begin Routine:
        # 控制文字的左对齐
        instr4_center_text.alignText = 'left'  # 设置左对齐
        instr4_top_text.alignText = 'left'

        # 显示鼠标可见
        win.mouseVisible = True

        # 初始化鼠标位置在slider中间
        instr4_mouse.setPos([0, 0.1])

        # 设置slider的marker外观
        # marker就是鼠标在直线上的光标
        instr4_slider.marker.size = (0.02, 0.08)  # 设置marker大小（宽度，高度）
        instr4_slider.marker.shape = 'square'     # 设置为方形
        instr4_slider.marker.fillColor = 'white'    # 设置颜色

        # 记录slider宽度，用于后续计算
        slider_width = 0.8
      Each Frame:
        # 获取当前鼠标位置
        mouse_pos = instr4_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0      # slider的中心x坐标
        slider_center_y = 0.1    # slider的中心y坐标
        slider_left = slider_center_x - slider_width/2    # 左边界
        slider_right = slider_center_x + slider_width/2   # 右边界
        slider_bottom = slider_center_y - 0.025          # 下边界
        slider_top = slider_center_y + 0.025             # 上边界

        # 检查鼠标是否在slider区域内（四个边界条件）
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        if mouse_in_slider:
            # 当鼠标在slider上时，让marker跟随鼠标移动

            # 将鼠标x坐标转换为slider的0-1范围
            # 这个计算将屏幕坐标映射到评分坐标
            slider_value = (mouse_x - slider_left) / slider_width

            # 限制数值在有效范围内，防止超出边界
            slider_value = max(0, min(1, slider_value))

            # 设置marker位置，这会让光标跟随鼠标移动
            instr4_slider.markerPos = slider_value
  Routine instr5
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    TextComponent instr5_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, 0.36)
      startVal [time (s)] = 0.0
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      text:
        【示例理解】：接下来，我们将通过几个例子来学习如何使用它，

        首先，我们来看一些情绪比较明显的例子。
    TextComponent instr5_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, -0.33)
      startVal [time (s)] = 0.0
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      text:
        【操作方式】：

        对于这样一张表现出强烈、纯粹开心的面孔，您应该将鼠标拖动到最左端。

        请注意：正式实验中，第一次鼠标点击后，即会自动进入下一张面孔的判断。
    TextComponent instr5_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    TextComponent instr5_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%开心
        (0%悲伤)
    TextComponent instr5_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%悲伤
        (0%开心)
    ImageComponent instr5_image
      image = prac_training_faces/m_0_m1.png
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent instr5_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0,1]
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    MouseComponent instr5_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    KeyboardComponent instr5_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr5_code
      Code Type = Auto->JS
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      Begin Routine:
        # 控制文字的左对齐
        instr5_center_text.alignText = 'left'
        instr5_top_text.alignText = 'left'

        # 显示鼠标可见
        win.mouseVisible = True

        # 初始化鼠标位置在slider中间
        instr5_mouse.setPos([0, -0.1])

        # 设置slider的marker外观
        instr5_slider.marker.size = (0.02, 0.08)  # 设置marker大小（宽度，高度）
        instr5_slider.marker.shape = 'square'     # 设置为方形
        instr5_slider.marker.fillColor = 'white'   # 设置颜色

        # 记录slider宽度，用于后续计算
        slider_width = 0.8
      Each Frame:
        # 获取当前鼠标位置
        mouse_pos = instr5_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0      # slider的中心x坐标
        slider_center_y = -0.1    # slider的中心y坐标
        slider_left = slider_center_x - slider_width/2    # 左边界
        slider_right = slider_center_x + slider_width/2   # 右边界
        slider_bottom = slider_center_y - 0.025          # 下边界
        slider_top = slider_center_y + 0.025             # 上边界

        # 检查鼠标是否在slider区域内（四个边界条件）
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        if mouse_in_slider:
            # 当鼠标在slider上时，让marker跟随鼠标移动
            # 将鼠标x坐标转换为slider的0-1范围
            slider_value = (mouse_x - slider_left) / slider_width

            # 限制数值在有效范围内，防止超出边界
            slider_value = max(0, min(1, slider_value))

            # 设置marker位置，这会让光标跟随鼠标移动
            instr5_slider.markerPos = slider_value

            # 检测鼠标点击，点击后结束当前routine
            #if instr5_mouse.getPressed()[0]:
                #continueRoutine = False
  Routine instr6
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    TextComponent instr6_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, 0.36)
      startVal [time (s)] = 0.0
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      text:
        【示例理解】：接下来，我们将通过几个例子来学习如何使用它，

        首先，我们来看一些情绪比较明显的例子。
    TextComponent instr6_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, -0.33)
      startVal [time (s)] = 0.0
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      text:
        【操作方式】：

        对于这样一张表现出强烈、纯粹悲伤的面孔，您应该将鼠标拖动到最右端。

        这些情况下，请您果断地使用直线的两端。
    TextComponent instr6_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    TextComponent instr6_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%开心
        (0%悲伤)
    TextComponent instr6_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%悲伤
        (0%开心)
    ImageComponent instr6_image
      image = prac_training_faces/m_100_m1.png
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent instr6_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0,1]
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    MouseComponent instr6_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    KeyboardComponent instr6_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr6_code
      Code Type = Auto->JS
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      Begin Routine:
        # 控制文字的左对齐
        instr6_center_text.alignText = 'left'
        instr6_top_text.alignText = 'left'

        # 显示鼠标可见
        win.mouseVisible = True

        # 初始化鼠标位置在slider中间
        instr6_mouse.setPos([0, -0.1])

        # 设置slider的marker外观
        instr6_slider.marker.size = (0.02, 0.08)  # 设置marker大小（宽度，高度）
        instr6_slider.marker.shape = 'square'     # 设置为方形
        instr6_slider.marker.fillColor = 'white'   # 设置颜色

        # 记录slider宽度，用于后续计算
        slider_width = 0.8
      Each Frame:
        # 获取当前鼠标位置
        mouse_pos = instr6_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0      # slider的中心x坐标
        slider_center_y = -0.1   # slider的中心y坐标
        slider_left = slider_center_x - slider_width/2    # 左边界
        slider_right = slider_center_x + slider_width/2   # 右边界
        slider_bottom = slider_center_y - 0.025          # 下边界
        slider_top = slider_center_y + 0.025             # 上边界

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        if mouse_in_slider:
            # 当鼠标在slider上时，让marker跟随鼠标移动
            slider_value = (mouse_x - slider_left) / slider_width
            slider_value = max(0, min(1, slider_value))
            instr6_slider.markerPos = slider_value
  Routine instr7
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    TextComponent instr7_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, 0.4)
      startVal [time (s)] = 0.0
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      text:
        【示例理解】：上述例子是为了向您展示什么是纯粹的‘开心’和‘悲伤’，从而帮助您理解这两种情绪的的含义。

        然而，很多面孔的情绪并不那么极端，而是两种情绪不同程度的混合。
    TextComponent instr7_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, -0.3)
      startVal [time (s)] = 0.0
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      text:
        【操作方式】：

        请看这张面孔。它可能既不完全是开心，也不完全是悲伤，而是两种情绪都有一些。

        有些人可能觉得它更像一种“苦乐参半”或“略带伤感的微笑”。

        现在，请根据您对这张面孔的【第一感觉】，拖动滑块到直线上您认为最匹配的位置。
    TextComponent instr7_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    TextComponent instr7_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%开心
        (0%悲伤)
    TextComponent instr7_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%悲伤
        (0%开心)
    ImageComponent instr7_image
      image = prac_training_faces/m_50_m1.png
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent instr7_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0,1]
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    MouseComponent instr7_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    KeyboardComponent instr7_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr7_code
      Code Type = Auto->JS
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      Begin Routine:
        # 控制文字的左对齐
        instr7_center_text.alignText = 'left'
        instr7_top_text.alignText = 'left'

        # 显示鼠标可见
        win.mouseVisible = True

        # 初始化鼠标位置在slider中间
        instr7_mouse.setPos([0, -0.1])

        # 设置slider的marker外观
        instr7_slider.marker.size = (0.02, 0.08)  # 设置marker大小（宽度，高度）
        instr7_slider.marker.shape = 'square'     # 设置为方形
        instr7_slider.marker.fillColor = 'white'   # 设置颜色

        # 记录slider宽度，用于后续计算
        slider_width = 0.8
      Each Frame:
        # 获取当前鼠标位置
        mouse_pos = instr7_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0      # slider的中心x坐标
        slider_center_y = -0.1   # slider的中心y坐标
        slider_left = slider_center_x - slider_width/2    # 左边界
        slider_right = slider_center_x + slider_width/2   # 右边界
        slider_bottom = slider_center_y - 0.025          # 下边界
        slider_top = slider_center_y + 0.025             # 上边界

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        if mouse_in_slider:
            # 当鼠标在slider上时，让marker跟随鼠标移动
            slider_value = (mouse_x - slider_left) / slider_width
            slider_value = max(0, min(1, slider_value))
            instr7_slider.markerPos = slider_value
  Routine instr8
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    TextComponent instr8_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, 0.4)
      startVal [time (s)] = 0.0
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      text:
        【示例理解】：然而，很多面孔的情绪并不那么极端，而是两种情绪不同程度的混合。
    TextComponent instr8_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.35, -0.28)
      startVal [time (s)] = 0.0
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      text:
        【操作方式】：

        很好！正如您所体验的，对于这种混合情绪，不同的人可能会将鼠标放在中间区域的不同位置，这完全是正常的。

        【请记住】：我们不需要您进行精确计算，只需要您相信自己的直觉。没有标准答案。
    TextComponent instr8_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    TextComponent instr8_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%开心
        (0%悲伤)
    TextComponent instr8_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        100%悲伤
        (0%开心)
    ImageComponent instr8_image
      image = prac_training_faces/m_50_m1.png
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent instr8_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [0,1]
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    MouseComponent instr8_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    KeyboardComponent instr8_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr8_code
      Code Type = Auto->JS
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      Begin Routine:
        # 控制文字的左对齐
        instr8_center_text.alignText = 'left'
        instr8_top_text.alignText = 'left'

        # 显示鼠标可见
        win.mouseVisible = True

        # 初始化鼠标位置在slider中间
        instr8_mouse.setPos([0, -0.1])

        # 设置slider的marker外观
        instr8_slider.marker.size = (0.02, 0.08)  # 设置marker大小（宽度，高度）
        instr8_slider.marker.shape = 'square'     # 设置为方形
        instr8_slider.marker.fillColor = 'white'   # 设置颜色

        # 记录slider宽度，用于后续计算
        slider_width = 0.8
      Each Frame:
        # 获取当前鼠标位置
        mouse_pos = instr8_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0      # slider的中心x坐标
        slider_center_y = -0.1   # slider的中心y坐标
        slider_left = slider_center_x - slider_width/2    # 左边界
        slider_right = slider_center_x + slider_width/2   # 右边界
        slider_bottom = slider_center_y - 0.025          # 下边界
        slider_top = slider_center_y + 0.025             # 上边界

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        if mouse_in_slider:
            # 当鼠标在slider上时，让marker跟随鼠标移动
            slider_value = (mouse_x - slider_left) / slider_width
            slider_value = max(0, min(1, slider_value))
            instr8_slider.markerPos = slider_value
  Routine instr9
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    TextComponent instr9_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        【重要说明】:

        1.在实验中，你将会看到两个人的面孔。

        实验分为几个短小的部分，每个部分会专注于其中一人的情绪面孔

        2.每一部分中，会出现多张同一人的面孔，

        但每张面孔之间可能会有微妙的情绪差异，

        请您仔细感受并根据直觉印象进行评分，没有标准答案。

        3.在每个部分之间会有短暂的休息时间，

        你可以眨眨眼或者稍微放松一下，整个实验会自动引导你完成，

        你只需要专注于对每张面孔的情绪进行判断即可。

        接下来，我们将在练习中进一步熟悉这个任务。
    TextComponent instr9_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按“空格”键开始练习实验
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    KeyboardComponent instr9_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr10
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    TextComponent instr10_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        【练习实验说明】：

        在练习中，系统会提供实时反馈，即显示情绪百分比，

        如：70%开心（30%悲伤），旨在帮助您建构对情绪连续体的理解，

        即：从纯开心到纯悲伤是一个渐变的连续体，

        直线中间的不同位置对应着不同的情绪程度。

        【您的目标】：通过练习，逐渐形成对情绪连续性的直觉理解，

        而非刻意记住任何数字或位置。

        【请注意】：这个实时提示仅用于练习试次。

        正式实验开始后，提示将会消失。
    TextComponent instr10_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 按“空格”键查看更多练习实验说明
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    KeyboardComponent instr10_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr11
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    TextComponent instr11_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        正式实验开始前，您将先进行22次练习，以熟悉任务流程。

        如果您已完全理解任务要求，按"空格"键开始练习，

        如果还有任何疑问，请联系主试。
    TextComponent instr11_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 按“空格”键开始练习实验
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    KeyboardComponent instr11_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instr11_code
      Code Type = Auto->JS
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      Begin Experiment:
        # 以下代码是关于初始化关键变量

        #######
        # 练习实验的全局计数器和关键变量
        # 练习重新开始的次数计数
        prac_cont_block = 1
        # 所有试次的连续计数
        prac_cont_trial = 0
        # 记录当前试次的性别类型
        prac_current_gender = ''
        # 记录前一个试次的性别，用于检测mini-block转换
        prac_previous_gender = None


        ########
        # 以下是正式实验的全局计数和关键变量
        # block计数
        form_cont_block = 1
        # 所有试次的计数
        form_cont_trial = 0
        # 记录当前试次的性别类型
        form_current_gender = ''
        # 记录前一个试次的性别，用于检测mini-block转换
        form_previous_gender = None
  Routine prac_begin_m
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    TextComponent prac_begin_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 按“空格”键开始
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    KeyboardComponent prac_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_resp_m
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    ImageComponent prac_resp_m_face_image
      image [set every repeat] = $prac_training_face
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    TextComponent prac_resp_m_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%开心
        (0%悲伤)
    TextComponent prac_resp_m_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%悲伤
        (0%开心)
    SliderComponent prac_resp_m_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.8, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = [0,1]
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    MouseComponent prac_resp_m_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
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    CodeComponent prac_resp_m_code
      Code Type = Auto->JS
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      Begin Routine:
        ##########
        # 以下是组件基本设置的代码：
        # 鼠标设置
        win.mouseVisible = True

        # 初始化鼠标位置在slider中间
        prac_resp_m_mouse.setPos([0, -0.25])

        # 设置男性模特slider的marker外观
        prac_resp_m_slider.marker.size = (0.02, 0.08)  # 设置marker大小
        prac_resp_m_slider.marker.shape = 'square'     # 设置为方形
        prac_resp_m_slider.marker.fillColor = 'white'   # 设置颜色

        # 记录slider宽度，用于后续计算
        slider_width = 0.8

        ############
        # 以下代码用于保存和记录数据

        # 试次计数和性别标记
        prac_cont_trial += 1
        prac_current_gender = 'male'

        # 记录这个试次开始的时间，用于后续计算反应时
        start_time = core.getTime()
        prac_cont_resp = None  # 初始化反应值
        prac_cont_rt = None    # 初始化反应时间

        # 创建实时反馈文本对象
        feedback_text = visual.TextStim(
            win=win,
            text='50%开心（50%悲伤）',  # 初始显示文本
            font='Arial',
            pos=[0, -0.35],  # 位置在slider下方
            height=0.03,
            color='white'
        )

        # 更新previous_gender变量，
        # 为下一个试次的mini-block检测做准备
        prac_previous_gender = prac_current_gender
      Each Frame:
        ##########

        # 获取当前鼠标位置
        mouse_pos = prac_resp_m_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0
        slider_center_y = -0.25
        slider_left = slider_center_x - slider_width/2
        slider_right = slider_center_x + slider_width/2
        slider_bottom = slider_center_y - 0.025
        slider_top = slider_center_y + 0.025

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        # 处理slider交互逻辑
        if mouse_in_slider:
            # 计算slider值，修正边界问题
            slider_value = (mouse_x - slider_left) / slider_width

            # 关键修改：扩大边界范围，允许0和1
            if slider_value < 0.01:
                slider_value = 0.0
            elif slider_value > 0.99:
                slider_value = 1.0
            else:
                slider_value = max(0, min(1, slider_value))

            # 更新slider marker位置，使用男性模特的slider组件
            prac_resp_m_slider.markerPos = slider_value

            # 计算并更新实时反馈文本
            sad_percent = int(slider_value * 100)
            happy_percent = 100 - sad_percent
            feedback_text.text = f'{happy_percent}%开心（{sad_percent}%悲伤）'

            # 检测鼠标点击
            #使用男性模特的鼠标组件
            if prac_resp_m_mouse.getPressed()[0]:
                # 保存反应数据
                prac_cont_resp = round(slider_value, 2)
                prac_cont_rt = round(core.getTime() - start_time, 3)
                continueRoutine = False
        else:
            # 鼠标不在slider上时，显示当前marker位置对应的文本
            current_value = prac_resp_m_slider.markerPos if prac_resp_m_slider.markerPos is not None else 0.5
            sad_percent = int(current_value * 100)
            happy_percent = 100 - sad_percent
            feedback_text.text = f'{happy_percent}%开心（{sad_percent}%悲伤）'

        feedback_text.draw()
      End Routine:
        #########
        # 保存详细的试次数据

        # 重新练习次数（block数）
        thisExp.addData('prac_cont_block', prac_cont_block)
        # 总试次编号（trial数）
        thisExp.addData('prac_cont_trial', prac_cont_trial)
        # 当前模特性别
        thisExp.addData('prac_current_gender', prac_current_gender)
        # 被试连续评分值
        thisExp.addData('prac_cont_resp', prac_cont_resp)
        # 反应时间
        thisExp.addData('prac_cont_rt', prac_cont_rt)
        # 进入下一条数据记录
        thisExp.nextEntry()

        # 隐藏鼠标
        win.mouseVisible = False
  Routine prac_end
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    TextComponent prac_end_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.21, 0)
      startVal [time (s)] = 0.0
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      text:
        恭喜！您已经完成所有练习试次，接下来将开始正式实验。

        该任务总共分为3个部分，每完成一部分后会有休息时间。您可以休息1分钟，感觉准备好了就继续。

        整个任务大约需要24分钟。


        【请注意】：

        1.正式实验中没有情绪程度的实时提示，请您完全依靠自己的直觉进行评估，答案本身没有对错。

        2.实验结束后，我们会检查您实验的认真程度，其与您的被试费挂钩，请您务必认真作答。


        如果仍需练习，请按“P”键返回练习。如果仍有疑问，请联系主试。

        如果您已完全理解任务要求，请空格键开始正式实验。
    TextComponent prac_end_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按“空格”键开始正式实验
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    KeyboardComponent prac_end_key_resp
      allowedKeys = 'space','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        # 初始化变量，只在实验开始时运行一次
        needPractice = True
      Begin Routine:
        ###########
        #以下代码是为了按“p”键能够返回练习
        # 清空之前的按键缓存，准备接收新按键
        event.clearEvents()

        ##########
        # 如果按了P键重新开始练习，block计数器+1
        prac_cont_block += 1


        #########
        # 控制文字的左对齐
        prac_end_center_text.alignText = 'left'
      End Routine:
        # 等待任意按键
        keys = event.waitKeys()

        if 'p' in keys:
            # 继续练习，什么都不做
            pass
        else:
            # 结束练习
            continue_prac.finished = True
  Routine form_begin_m
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    TextComponent form_begin_m_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 按“空格”键开始
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    KeyboardComponent form_begin_m_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine form_resp_m
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    ImageComponent form_resp_m_face_image
      image [set every repeat] = $formal_training_face
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    TextComponent form_resp_m_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%开心
        (0%悲伤)
    TextComponent form_resp_m_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%悲伤
        (0%开心)
    SliderComponent form_resp_m_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.8, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = [0,1]
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    MouseComponent form_resp_m_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
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    CodeComponent form_resp_m_code
      Code Type = Auto->JS
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      Begin Routine:
        ##########
        # 以下是组件基本设置的代码：
        # 鼠标设置
        win.mouseVisible = True
        # 初始化鼠标位置在slider中间
        form_resp_m_mouse.setPos([0, -0.25])

        # 设置slider的marker外观
        form_resp_m_slider.marker.size = (0.02, 0.08)
        form_resp_m_slider.marker.shape = 'square'
        form_resp_m_slider.marker.fillColor = 'white'
        # 记录slider宽度，用于后续计算
        slider_width = 0.8

        ############
        # 以下代码用于保存和记录数据

        # 试次计数和性别标记
        form_cont_trial += 1
        form_current_gender = 'male'

        # 记录这个试次开始的时间，用于后续计算反应时
        start_time = core.getTime()
        # 初始化反应值
        form_cont_resp = None
        # 初始化反应时间
        form_cont_rt = None

        # 更新previous_gender变量，
        # 为下一个试次的mini-block检测做准备
        form_previous_gender = form_current_gender
      Each Frame:
        ##########
        # 获取当前鼠标位置
        mouse_pos = form_resp_m_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0
        slider_center_y = -0.25
        slider_left = slider_center_x - slider_width/2
        slider_right = slider_center_x + slider_width/2
        slider_bottom = slider_center_y - 0.025
        slider_top = slider_center_y + 0.025

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        # 处理slider交互逻辑
        if mouse_in_slider:
            # 计算slider值，修正边界问题
            slider_value = (mouse_x - slider_left) / slider_width

            # 关键修改：扩大边界范围，允许0和1
            if slider_value < 0.01:
                slider_value = 0.0
            elif slider_value > 0.99:
                slider_value = 1.0
            else:
                slider_value = max(0, min(1, slider_value))

            # 更新slider marker位置
            form_resp_m_slider.markerPos = slider_value

            # 检测鼠标点击
            if form_resp_m_mouse.getPressed()[0]:
                # 保存反应数据
                form_cont_resp = round(slider_value, 2)
                form_cont_rt = round(core.getTime() - start_time, 3)
                continueRoutine = False
      End Routine:
        #########
        # 以下代码是为了保存数据

        # block数
        thisExp.addData('form_cont_block', form_cont_block)
        # trial数
        thisExp.addData('form_cont_trial', form_cont_trial)
        # 当前模特性别
        thisExp.addData('form_current_gender', form_current_gender)
        # 被试连续评分值
        thisExp.addData('form_cont_resp', form_cont_resp)
        # 反应时间
        thisExp.addData('form_cont_rt', form_cont_rt)
        # 进入下一条数据记录
        thisExp.nextEntry()


        # 隐藏鼠标
        win.mouseVisible = False
  Routine form_break
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    TextComponent form_break_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        现在休息1分钟

        1分钟后，如果您感觉准备好了，您需要按“空格”键继续实验
    TextComponent form_break_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 60
      text = 按“空格”键继续实验
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    KeyboardComponent form_break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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    CodeComponent form_break_code
      Code Type = Auto->JS
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      Begin Routine:
        ##########
        # 每次休息，block计数器＋1
        form_cont_block += 1

        #########
        # 显示实验进度
        progress_text = visual.TextStim(
            win=win,
            text=f'已完成{form_cont_block - 1}/3部分',  # 直接在这里计算
            font='Arial',
            pos=[0, 0.1],  # 纵坐标0.1
            height=0.03,
            color='black'
        )

        # 记录文本开始显示的时间
        text_start_time = core.getTime()
      Each Frame:
        # 控制文本只显示60秒
        if core.getTime() - text_start_time <= 60.0:
            progress_text.draw()
  Routine form_end
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  Routine xab_instr1
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    TextComponent xab_instr1_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        恭喜！您已完成本实验的第一个任务，

        接下来我们继续进行情绪识别相关的第二个任务。

        在本任务中，首先，你会先看到一张面孔（如下所示），
    ImageComponent xab_instr1_X_image
      image = prac_training_faces/m_10_f1.png
      pos = (0, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent xab_instr1_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    KeyboardComponent xab_instr1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine xab_instr2
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    TextComponent xab_instr2_top_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        接着，面孔图片消失后，您会同时看到两张面孔图片（如下所示），

        您需要判断这两张面孔中的哪一张与第一张面孔更相似

        如果你认为左边面孔与第一张面孔更相似，按“F”键，

        如果你认为右边面孔与第一张面孔更相似，按“J”键。
    TextComponent xab_instr2_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    ImageComponent xab_instr2_face_a_image
      image = prac_training_faces/m_10_f1.png
      pos = (-0.15, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent xab_instr2_face_b_image
      image = prac_training_faces/m_10_f1.png
      pos = (0.15, -0.1)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent xab_instr2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine xab_instr3
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    TextComponent xab_instr3_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        【练习实验说明】


        【重要】：请您凭第一直觉【又快又准】地做出每一次判断。

        正式实验开始前，您将先进行14次练习，以熟悉任务流程。

        如果还有任何疑问，请联系主试。

        如果您已完全理解任务要求，按"空格"键开始练习。
    TextComponent xab_instr3_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = 按“空格”键开始练习实验
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    KeyboardComponent xab_instr3_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_xab_x
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    TextComponent prac_xab_x_cross_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    ImageComponent prac_xab_x_image
      image [set every repeat] = $prac_x
      size = (0.25, 0.25)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
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  Routine prac_xab_blank1
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    TextComponent pracl_xab_blank1_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prac_xab_ab
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    ImageComponent prac_xab_ab_a_image
      image [set every repeat] = $prac_a
      pos = (-0.15, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent prac_xab_ab_b_image
      image [set every repeat] = $prac_b
      pos = (0.15, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent prac_xab_ab_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_xab_ab_code
      Code Type = Auto->JS
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      Begin Experiment:
        #########
        # 以下代码为了保存数据
        prac_xab_block = 1  # block计数器（每次重新开始练习时+1）
        prac_xab_trial = 0  # trial计数器（每个试次+1）
      Begin Routine:
        # 防止被试在刺激呈现之前按键反应
        # 完全重置keyboard组件
        prac_xab_ab_key_resp.status = NOT_STARTED
        prac_xab_ab_key_resp.keys = []
        prac_xab_ab_key_resp.rt = []
        prac_xab_ab_key_resp.clock.reset()
        prac_xab_ab_key_resp.clearEvents()
        event.clearEvents(eventType='keyboard')

        # 记录routine开始时间（用于计算反应时）
        prac_start_time = core.getTime()

        # 试次计数+1
        prac_xab_trial += 1

        # 初始化反应相关变量
        prac_xab_resp = None  # 反应正确性（1=正确，0=错误）
        prac_xab_rt = None    # 反应时
        prac_user_key = None       # 被试按下的键
      Each Frame:
        # 强制控制routine不能自动结束
        continueRoutine = True  # 每帧都重新设置为True

        # 按键检测代码
        keys = event.getKeys(keyList=['f', 'j'])
        if keys and prac_user_key is None:  # 只记录第一次按键
            prac_user_key = keys[0]  # 记录按下的键
            prac_xab_rt = round(core.getTime() - prac_start_time, 3)  # 计算反应时

            # 判断反应是否正确
            if prac_user_key == prac_correct_resp:  # 与条件文件中的正确答案比较
                prac_xab_resp = 1  # 正确
            else:
                prac_xab_resp = 0  # 错误

            # 只有在按键后才允许routine结束
            continueRoutine = False
      End Routine:
        # 保存数据到实验文件
        thisExp.addData('prac_xab_block', prac_xab_block)
        thisExp.addData('prac_xab_trial', prac_xab_trial)
        thisExp.addData('prac_xab_resp', prac_xab_resp)
        thisExp.addData('prac_xab_rt', prac_xab_rt)
        thisExp.addData('prac_user_key', prac_user_key)  # 额外保存被试按的键，便于分析
        thisExp.nextEntry()
  Routine prac_xab_blank2
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    TextComponent pracl_xab_blank2_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine prac_xab_end
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    TextComponent prac_xab_end_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.21, 0)
      startVal [time (s)] = 0.0
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      text:
        恭喜！您已经完成所有练习试次，接下来将开始正式实验。

        该任务总共分为4个部分，每完成一部分后会有休息时间。您可以休息1分钟，感觉准备好了就继续。

        整个任务大约需要16分钟。


        【请注意】：

        1.请您凭第一直觉【又快又准】地做出每一次判断。

        2.实验结束后，我们会检查您实验的认真程度，其与您的被试费挂钩，请您务必认真作答。


        如果仍需练习，请按“P”键返回练习。如果仍有疑问，请联系主试。

        如果您已完全理解任务要求，请空格键开始正式实验。
    TextComponent prac_xab_end_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 按“空格”键开始正式实验
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    KeyboardComponent prac_xab_end_key_resp
      allowedKeys = 'space','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_xan_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        # 初始化变量，只在实验开始时运行一次
        needPractice = True
      Begin Routine:
        ###########
        #以下代码是为了按“p”键能够返回练习
        # 清空之前的按键缓存，准备接收新按键
        event.clearEvents()

        ##########
        # 如果按了P键重新开始练习，block计数器+1
        prac_xab_block += 1

        #########
        # 控制文字的左对齐
        prac_xab_end_center_text.alignText = 'left'
      End Routine:
        # 等待任意按键
        keys = event.waitKeys()

        if 'p' in keys:
            # 继续练习，什么都不做
            pass
        else:
            # 结束练习
            continue_prac_xab.finished = True
  Routine xab_x
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    TextComponent xab_x_cross_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    ImageComponent xab_x_image
      image [set every repeat] = $formal_x
      size = (0.25, 0.25)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
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  Routine xab_blank1
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    TextComponent xab_blank1_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine xab_ab
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    ImageComponent xab_ab_a_image
      image [set every repeat] = $formal_a
      pos = (-0.15, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent xab_ab_b_image
      image [set every repeat] = $formal_b
      pos = (0.15, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent xab_ab_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent xab_ab_code
      Code Type = Auto->JS
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      Begin Experiment:
        #########
        # 以下代码为了保存数据
        formal_xab_block = 1  # block计数器
        formal_xab_trial = 0  # trial计数器
      Begin Routine:
        # 防止被试在刺激呈现之前按键反应
        # 完全重置keyboard组件
        xab_ab_key_resp.status = NOT_STARTED
        xab_ab_key_resp.keys = []
        xab_ab_key_resp.rt = []
        xab_ab_key_resp.clock.reset()
        xab_ab_key_resp.clearEvents()
        event.clearEvents(eventType='keyboard')

        # 记录routine开始时间（用于计算反应时）
        form_start_time = core.getTime()

        # 试次计数+1
        formal_xab_trial += 1

        # 初始化反应相关变量
        form_xab_resp = None  # 反应正确性（1=正确，0=错误）
        form_xab_rt = None    # 反应时
        form_user_key = None       # 被试按下的键
      Each Frame:
        # 强制控制routine不能自动结束
        continueRoutine = True  # 每帧都重新设置为True

        # 按键检测代码
        keys = event.getKeys(keyList=['f', 'j'])
        if keys and form_user_key is None:  # 只记录第一次按键
            form_user_key = keys[0]  # 记录按下的键
            form_xab_rt = round(core.getTime() - form_start_time, 3)  # 计算反应时

            # 判断反应是否正确
            if form_user_key == formal_correct_resp:  # 与条件文件中的正确答案比较
                form_xab_resp = 1  # 正确
            else:
                form_xab_resp = 0  # 错误

            # 只有在按键后才允许routine结束
            continueRoutine = False
      End Routine:
        # 保存数据到实验文件
        thisExp.addData('formal_xab_block', formal_xab_block)
        thisExp.addData('formal_xab_trial', formal_xab_trial)
        thisExp.addData('form_xab_resp', form_xab_resp)
        thisExp.addData('form_xab_rt', form_xab_rt)
        thisExp.addData('form_user_key', form_user_key)  # 额外保存被试按的键，便于分析
        thisExp.nextEntry()
  Routine xab_blank2
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    TextComponent xab_blank2_text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine xab_break
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    TextComponent xab_break_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        现在休息1分钟

        1分钟后，如果您感觉准备好了，您需要按“空格”键继续实验
    TextComponent xab_break_bottom_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 60
      text = 按“空格”键继续实验
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    KeyboardComponent xab_break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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    CodeComponent xab_break_code
      Code Type = Auto->JS
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      Begin Routine:
        ##########
        # 每次休息，block计数器＋1
        formal_xab_block += 1

        #########
        # 显示实验进度
        progress_text = visual.TextStim(
            win=win,
            text=f'已完成{formal_xab_block - 1}/4部分',  # 直接在这里计算
            font='Arial',
            pos=[0, 0.1],  # 纵坐标0.1
            height=0.03,
            color='black'
        )

        # 记录文本开始显示的时间
        text_start_time = core.getTime()
      Each Frame:
        # 控制文本只显示60秒
        if core.getTime() - text_start_time <= 60.0:
            progress_text.draw()
  Routine end
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    TextComponent end_center_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        您已经完成全部实验！

        请按“空格”键退出实验，并联系主试。
    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine form_blank_m
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    TextComponent form_blank_m_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine prac_blank_m
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    TextComponent prac_blank_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine form_break_m
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    TextComponent form_break_m_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 现在休息10秒
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  Routine form_begin_f
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    TextComponent form_begin_f_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 按“空格”键开始
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    KeyboardComponent form_begin_f_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine form_cross_f
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    TextComponent form_cross_f_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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  Routine form_resp_f
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    ImageComponent form_resp_f_face_image
      image [set every repeat] = $formal_training_face
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    TextComponent form_resp_f_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%开心
        (0%悲伤)
    TextComponent form_resp_f_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%悲伤
        (0%开心)
    SliderComponent form_resp_f_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.8, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = [0,1]
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    MouseComponent form_resp_f_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
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    CodeComponent form_resp_f_code
      Code Type = Auto->JS
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      Begin Routine:
        ##########
        # 以下是组件基本设置的代码：

        # 鼠标设置
        win.mouseVisible = True
        # 初始化鼠标位置在slider中间
        form_resp_f_mouse.setPos([0, -0.25])

        # 设置slider的marker外观
        form_resp_f_slider.marker.size = (0.02, 0.08)
        form_resp_f_slider.marker.shape = 'square'
        form_resp_f_slider.marker.fillColor = 'white'
        # 记录slider宽度，用于后续计算
        slider_width = 0.8

        ############
        # 以下代码用于保存和记录数据

        # 试次计数和性别标记
        form_cont_trial += 1
        form_current_gender = 'female'

        # 记录这个试次开始的时间，用于后续计算反应时
        start_time = core.getTime()
        form_cont_resp = None  # 初始化反应值
        form_cont_rt = None    # 初始化反应时间

        # 更新previous_gender变量，
        # 为下一个试次的mini-block检测做准备
        form_previous_gender = form_current_gender
      Each Frame:
        ##########
        # 获取当前鼠标位置
        mouse_pos = form_resp_f_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0
        slider_center_y = -0.25
        slider_left = slider_center_x - slider_width/2
        slider_right = slider_center_x + slider_width/2
        slider_bottom = slider_center_y - 0.025
        slider_top = slider_center_y + 0.025

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        # 处理slider交互逻辑
        if mouse_in_slider:
            # 计算slider值，修正边界问题
            slider_value = (mouse_x - slider_left) / slider_width

            # 关键修改：扩大边界范围，允许0和1
            if slider_value < 0.01:
                slider_value = 0.0
            elif slider_value > 0.99:
                slider_value = 1.0
            else:
                slider_value = max(0, min(1, slider_value))

            # 更新slider marker位置
            form_resp_f_slider.markerPos = slider_value

            # 检测鼠标点击
            if form_resp_f_mouse.getPressed()[0]:
                # 保存反应数据
                form_cont_resp = round(slider_value, 2)
                form_cont_rt = round(core.getTime() - start_time, 3)
                continueRoutine = False
      End Routine:
        #########
        # 以下代码是为了保存数据

        # block数
        thisExp.addData('form_cont_block', form_cont_block)
        # trial数
        thisExp.addData('form_cont_trial', form_cont_trial)
        # 当前模特性别
        thisExp.addData('form_current_gender', form_current_gender)
        # 被试连续评分值
        thisExp.addData('form_cont_resp', form_cont_resp)
        # 反应时间
        thisExp.addData('form_cont_rt', form_cont_rt)
        # 进入下一条数据记录
        thisExp.nextEntry()

        # 隐藏鼠标
        win.mouseVisible = False
  Routine form_blank_f
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    TextComponent form_blank_f_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine form_cross_m
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    TextComponent form_cross_m_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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  Routine prac_cross_m
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    TextComponent prac_cross_m_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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  Routine prac_break_f
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    TextComponent prac_break_f_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 现在休息10秒
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  Routine prac_begin_f
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    TextComponent prac_begin_f_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 按“空格”键开始
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    KeyboardComponent prac_begin_f_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_cross_f
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    TextComponent prac_cross_f_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ＋
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  Routine prac_resp_f
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    ImageComponent prac_resp_f_face_image
      image [set every repeat] = $prac_training_face
      size = (0.25, 0.25)
      startVal [time (s)] = 0
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    TextComponent prac_resp_f_left_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%开心
        (0%悲伤)
    TextComponent prac_resp_f_right_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0.5, -0.25)
      startVal [time (s)] = 0
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      text:
        100%悲伤
        (0%开心)
    SliderComponent prac_resp_f_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0.01
      initVal = 0.5
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.8, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = [0,1]
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    MouseComponent prac_resp_f_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
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    CodeComponent prac_resp_f_code
      Code Type = Auto->JS
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      Begin Routine:
        ##########
        # 以下是组件基本设置的代码：

        # 鼠标设置
        win.mouseVisible = True
        # 初始化鼠标位置在slider中间
        prac_resp_f_mouse.setPos([0, -0.25])

        # 设置slider的marker外观
        prac_resp_f_slider.marker.size = (0.02, 0.08)
        prac_resp_f_slider.marker.shape = 'square'
        prac_resp_f_slider.marker.fillColor = 'white'

        # 记录slider宽度，用于后续计算
        slider_width = 0.8

        ############
        # 以下代码用于保存和记录数据

        # 试次计数和性别标记
        prac_cont_trial += 1
        prac_current_gender = 'female'

        # 记录这个试次开始的时间，用于后续计算反应时
        start_time = core.getTime()
        prac_cont_resp = None  # 初始化反应值
        prac_cont_rt = None    # 初始化反应时间

        # 创建实时反馈文本对象
        feedback_text = visual.TextStim(
            win=win,
            text='50%开心（50%悲伤）',  # 初始显示文本
            font='Arial',
            pos=[0, -0.35],  # 位置在slider下方
            height=0.03,
            color='white'
        )

        # 更新previous_gender变量，
        # 为下一个试次的mini-block检测做准备
        prac_previous_gender = prac_current_gender
      Each Frame:
        ##########

        # 获取当前鼠标位置
        mouse_pos = prac_resp_f_mouse.getPos()
        mouse_x, mouse_y = mouse_pos

        # 基于slider的位置和大小，计算slider的边界
        slider_center_x = 0
        slider_center_y = -0.25
        slider_left = slider_center_x - slider_width/2
        slider_right = slider_center_x + slider_width/2
        slider_bottom = slider_center_y - 0.025
        slider_top = slider_center_y + 0.025

        # 检查鼠标是否在slider区域内
        mouse_in_slider = (slider_left <= mouse_x <= slider_right and
                           slider_bottom <= mouse_y <= slider_top)

        # 处理slider交互逻辑
        if mouse_in_slider:
            # 计算slider值，修正边界问题
            slider_value = (mouse_x - slider_left) / slider_width

            # 关键修改：扩大边界范围，允许0和1
            if slider_value < 0.01:
                slider_value = 0.0
            elif slider_value > 0.99:
                slider_value = 1.0
            else:
                slider_value = max(0, min(1, slider_value))

            # 更新slider marker位置 - 使用女性模特的slider组件
            prac_resp_f_slider.markerPos = slider_value

            # 计算并更新实时反馈文本
            sad_percent = int(slider_value * 100)
            happy_percent = 100 - sad_percent
            feedback_text.text = f'{happy_percent}%开心（{sad_percent}%悲伤）'

            # 检测鼠标点击 - 使用女性模特的鼠标组件
            if prac_resp_f_mouse.getPressed()[0]:
                # 保存反应数据
                prac_cont_resp = round(slider_value, 2)
                prac_cont_rt = round(core.getTime() - start_time, 3)
                continueRoutine = False
        else:
            # 鼠标不在slider上时，显示当前marker位置对应的文本
            current_value = prac_resp_f_slider.markerPos if prac_resp_f_slider.markerPos is not None else 0.5
            sad_percent = int(current_value * 100)
            happy_percent = 100 - sad_percent
            feedback_text.text = f'{happy_percent}%开心（{sad_percent}%悲伤）'

        feedback_text.draw()
      End Routine:
        #########
        # 以下代码是为了保存数据

        # block数
        thisExp.addData('prac_cont_block', prac_cont_block)
        # trial数
        thisExp.addData('prac_cont_trial', prac_cont_trial)
        # 当前模特性别
        thisExp.addData('prac_current_gender', prac_current_gender)
        # 被试连续评分值
        thisExp.addData('prac_cont_resp', prac_cont_resp)
        # 反应时间
        thisExp.addData('prac_cont_rt', prac_cont_rt)
        # 进入下一条数据记录
        thisExp.nextEntry()


        # 隐藏鼠标
        win.mouseVisible = False
  Routine prac_blank_f
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    TextComponent prac_blank_f_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine form_break_f
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    TextComponent form_break_f_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 现在休息10秒
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Flow
  Routine instr1
  Routine instr2
  Routine instr3
  Routine instr4
  Routine instr5
  Routine instr6
  Routine instr7
  Routine instr8
  Routine instr9
  Routine instr10
  LoopInitiator continue_prac loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 999
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    Routine instr11
    LoopInitiator prac_f loopType="TrialHandler"
      conditionsFile = prac_training_f_faces.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'prac_training_face': 'prac_training_faces/m_0_f1.png', 'prac_training_emotion': 0, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_10_f1.png', 'prac_training_emotion': 10, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_20_f1.png', 'prac_training_emotion': 20, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_30_f1.png', 'prac_training_emotion': 30, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_40_f1.png', 'prac_training_emotion': 40, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_50_f1.png', 'prac_training_emotion': 50, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_60_f1.png', 'prac_training_emotion': 60, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_70_f1.png', 'prac_training_emotion': 70, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_80_f1.png', 'prac_training_emotion': 80, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'},
        {'prac_training_face': 'prac_training_faces/m_90_f1.png', 'prac_training_emotion': 90, 'prac_training_actor': 'f1', 'prac_training_gender': 'female'}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
      Routine prac_begin_f
      Routine prac_cross_f
      Routine prac_resp_f
      Routine prac_blank_f
    LoopTerminator prac_f
    Routine prac_break_f
    LoopInitiator prac_m loopType="TrialHandler"
      conditionsFile = prac_training_m_faces.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'prac_training_face': 'prac_training_faces/m_0_m1.png', 'prac_training_emotion': 0, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_10_m1.png', 'prac_training_emotion': 10, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_20_m1.png', 'prac_training_emotion': 20, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_30_m1.png', 'prac_training_emotion': 30, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_40_m1.png', 'prac_training_emotion': 40, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_50_m1.png', 'prac_training_emotion': 50, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_60_m1.png', 'prac_training_emotion': 60, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_70_m1.png', 'prac_training_emotion': 70, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_80_m1.png', 'prac_training_emotion': 80, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'},
        {'prac_training_face': 'prac_training_faces/m_90_m1.png', 'prac_training_emotion': 90, 'prac_training_actor': 'm1', 'prac_training_gender': 'male'}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
      Routine prac_begin_m
      Routine prac_cross_m
      Routine prac_resp_m
      Routine prac_blank_m
    LoopTerminator prac_m
    Routine prac_end
  LoopTerminator continue_prac
  LoopInitiator form_training_outer_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator form_training_inner_block loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 4
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      LoopInitiator form_f loopType="TrialHandler"
        conditionsFile = formal_training_f_faces.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'formal_training_face': 'formal_training_faces/m_0_f2.png', 'formal_training_emotion': 0, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_10_f2.png', 'formal_training_emotion': 10, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_20_f2.png', 'formal_training_emotion': 20, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_30_f2.png', 'formal_training_emotion': 30, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_40_f2.png', 'formal_training_emotion': 40, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_50_f2.png', 'formal_training_emotion': 50, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_60_f2.png', 'formal_training_emotion': 60, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_70_f2.png', 'formal_training_emotion': 70, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'},
          {'formal_training_face': 'formal_training_faces/m_80_f2.png', 'formal_training_emotion': 80, 'formal_training_actor': 'f2', 'formal_training_gender': 'female'}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
        Routine form_begin_f
        Routine form_cross_f
        Routine form_resp_f
        Routine form_blank_f
      LoopTerminator form_f
      Routine form_break_f
      LoopInitiator form_m loopType="TrialHandler"
        conditionsFile = formal_training_m_faces.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'formal_training_face': 'formal_training_faces/m_0_m2.png', 'formal_training_emotion': 0, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_10_m2.png', 'formal_training_emotion': 10, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_20_m2.png', 'formal_training_emotion': 20, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_30_m2.png', 'formal_training_emotion': 30, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_40_m2.png', 'formal_training_emotion': 40, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_50_m2.png', 'formal_training_emotion': 50, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_60_m2.png', 'formal_training_emotion': 60, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_70_m2.png', 'formal_training_emotion': 70, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'},
          {'formal_training_face': 'formal_training_faces/m_80_m2.png', 'formal_training_emotion': 80, 'formal_training_actor': 'm2', 'formal_training_gender': 'male'}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
        Routine form_begin_m
        Routine form_cross_m
        Routine form_resp_m
        Routine form_blank_m
      LoopTerminator form_m
      Routine form_break_m
    LoopTerminator form_training_inner_block
    Routine form_break
  LoopTerminator form_training_outer_block
  Routine xab_instr1
  Routine xab_instr2
  LoopInitiator continue_prac_xab loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine xab_instr3
    LoopInitiator prac_xab loopType="TrialHandler"
      conditionsFile = prac_xab_faces.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'prac_xab_pairs': '10-30', 'prac_correct_resp': 'j', 'prac_x_emotion': 10, 'prac_x': 'prac_training_faces/m_10_f1.png', 'prac_a_emotin': 30, 'prac_a': 'prac_training_faces/m_30_f1.png', 'prac_b_emotion': 10, 'prac_b': 'prac_training_faces/m_10_f1.png'},
        {'prac_xab_pairs': '20-40', 'prac_correct_resp': 'f', 'prac_x_emotion': 40, 'prac_x': 'prac_training_faces/m_40_f1.png', 'prac_a_emotin': 40, 'prac_a': 'prac_training_faces/m_40_f1.png', 'prac_b_emotion': 20, 'prac_b': 'prac_training_faces/m_20_f1.png'},
        {'prac_xab_pairs': '30-50', 'prac_correct_resp': 'j', 'prac_x_emotion': 30, 'prac_x': 'prac_training_faces/m_30_f1.png', 'prac_a_emotin': 50, 'prac_a': 'prac_training_faces/m_50_f1.png', 'prac_b_emotion': 30, 'prac_b': 'prac_training_faces/m_30_f1.png'},
        {'prac_xab_pairs': '40-60', 'prac_correct_resp': 'f', 'prac_x_emotion': 60, 'prac_x': 'prac_training_faces/m_60_f1.png', 'prac_a_emotin': 60, 'prac_a': 'prac_training_faces/m_60_f1.png', 'prac_b_emotion': 40, 'prac_b': 'prac_training_faces/m_40_f1.png'},
        {'prac_xab_pairs': '50-70', 'prac_correct_resp': 'j', 'prac_x_emotion': 50, 'prac_x': 'prac_training_faces/m_50_f1.png', 'prac_a_emotin': 70, 'prac_a': 'prac_training_faces/m_70_f1.png', 'prac_b_emotion': 50, 'prac_b': 'prac_training_faces/m_50_f1.png'}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
      Routine prac_xab_x
      Routine prac_xab_blank1
      Routine prac_xab_ab
      Routine prac_xab_blank2
    LoopTerminator prac_xab
    Routine prac_xab_end
  LoopTerminator continue_prac_xab
  LoopInitiator form_xab_block loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator form_xab loopType="TrialHandler"
      conditionsFile = formal_xab_faces.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'formal_xab_pairs': '10-30', 'formal_x_emotion': 10, 'formal_x': 'formal_training_faces/m_10_f2.png', 'formal_a_emotin': 10, 'formal_a': 'formal_training_faces/m_10_f2.png', 'formal_b_emotion': 30, 'formal_b': 'formal_training_faces/m_30_f2.png', 'formal_correct_resp': 'f', 'formal_x_actor': 'f2', 'formal_x_gender': 'female'},
        {'formal_xab_pairs': '10-30', 'formal_x_emotion': 10, 'formal_x': 'formal_training_faces/m_10_f2.png', 'formal_a_emotin': 30, 'formal_a': 'formal_training_faces/m_30_f2.png', 'formal_b_emotion': 10, 'formal_b': 'formal_training_faces/m_10_f2.png', 'formal_correct_resp': 'j', 'formal_x_actor': 'f2', 'formal_x_gender': 'female'},
        {'formal_xab_pairs': '10-30', 'formal_x_emotion': 30, 'formal_x': 'formal_training_faces/m_30_f2.png', 'formal_a_emotin': 10, 'formal_a': 'formal_training_faces/m_10_f2.png', 'formal_b_emotion': 30, 'formal_b': 'formal_training_faces/m_30_f2.png', 'formal_correct_resp': 'j', 'formal_x_actor': 'f2', 'formal_x_gender': 'female'},
        {'formal_xab_pairs': '10-30', 'formal_x_emotion': 30, 'formal_x': 'formal_training_faces/m_30_f2.png', 'formal_a_emotin': 30, 'formal_a': 'formal_training_faces/m_30_f2.png', 'formal_b_emotion': 10, 'formal_b': 'formal_training_faces/m_10_f2.png', 'formal_correct_resp': 'f', 'formal_x_actor': 'f2', 'formal_x_gender': 'female'}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
      Routine xab_x
      Routine xab_blank1
      Routine xab_ab
      Routine xab_blank2
    LoopTerminator form_xab
    Routine xab_break
  LoopTerminator form_xab_block
  Routine end
