PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'sex': 'female/male', 'age': '18~30'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = exp05A
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        欢迎参与我们的实验！
        在这项研究中，您将看到很多面孔图片，每次一张。
        您的任务是判断每张面孔图片表达的情绪。

        按空格键查看更多说明。
    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent intro_code
      Code Type = Py
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      Begin Experiment:
        win.mouseVisible = False
      Each Frame:
        win.mouseVisible = False
  Routine prac_end
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    TextComponent prac_end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        练习部分到此为止。
        如果您有任何疑问，请咨询实验员。

        请对接下来呈现的图片进行分类或连续判断，

        如果您看到‘恐惧’和‘平静’两个文字，
        这表示您需要对接下来呈现的面孔图片进行分类情绪判断，
        如果您看到‘恐惧’和‘平静’两个文字且中间有一条横线，
        这表示您需要对接下来呈现的面孔图片进行连续情绪判断。

        如果您已经准备好，请按“enter”键开始正式实验。
    KeyboardComponent prac_end_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end_exp
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    TextComponent end_exp_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 实验任务已全部完成，感谢您的参与！
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  Routine formal_cont_face
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    ImageComponent formal_cont_face_image
      image [set every repeat] = $S2cate2cont1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine prac_cont_face
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    ImageComponent prac_cont_face_image
      image [set every repeat] = $S2praccont1cate2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine test
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    SliderComponent slider_2
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.75, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 1)
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  Routine intro_4
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    TextComponent intro_4_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        您需要尽快使用鼠标左键选择一个与面孔相符的情绪类别，
        被选中的情绪词周围会出现白色方框(如下所示)。
    KeyboardComponent intro_4_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent intro_4_rect_left
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (-0.3, -0.1)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    TextComponent intro_4_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent intro_4_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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  Routine intro_5
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    TextComponent intro_5_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        2.连续判断：
        面孔消失后，如果您看到‘恐惧’和‘平静’两个文字且中间有一条横线（如下所示），
        这表示您需要对刚才呈现的面孔图片进行连续情绪判断。
        横线的最左端表示0%的恐惧（即100%的平静），最右端表示100%的恐惧。
    KeyboardComponent intro_5_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent intro_5_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent intro_5_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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    PolygonComponent intro_5_cont_fix_line
      fillColor = white
      pos = (0, -0.1)
      shape = rectangle
      size = (0.5, 0.005)
      startVal [time (s)] = 0
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  Routine prac_cont_begin
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    TextComponent prac_cont_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = 按空格键开始
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    KeyboardComponent prac_cont_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine formal_cont_begin
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    TextComponent formal_cont_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = 按空格键开始
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    KeyboardComponent formal_cont_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine with_intro_2
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    TextComponent with_intro_2_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        1.分类判断：

        如果您看到‘恐惧’和‘平静’两个文字（如下所示），
        这表示您需要对接下来呈现的面孔图片进行分类情绪判断，
        即从"恐惧"或"平静"两个选项中任选其一。
    KeyboardComponent with_intro_2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent with_intro_2_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent with_intro_2_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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  Routine with_intro_3
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    TextComponent with_intro_3_text
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        接着，您会看到一个短暂呈现的面孔图片，例如下图。
        请注意，您可能会看到同一个人出现多次，但不一定是同样的表情，
        您只需要对当前呈现的面孔情绪做出判断。
    KeyboardComponent with_intro_3_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent with_intro_3_image
      image = stimuli/m_y50f_10.bmp
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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  Routine with_intro_4
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    TextComponent with_intro_4_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        面孔消失后，请尽快使用鼠标左键选择一个与面孔相符的情绪类别，
        被选中的情绪词周围会出现白色方框(如下所示)。
    KeyboardComponent with_intro_4_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent with_intro_4_rect_left
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (-0.3, -0.1)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    TextComponent with_intro_4_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent with_intro_4_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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  Routine with_intro_5
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    TextComponent with_intro_5_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        2.连续判断：

        如果您看到‘恐惧’和‘平静’两个文字且中间有一条横线（如下所示），
        这表示您需要对接下来呈现的面孔图片进行连续情绪判断。
        横线的最左端表示0%的恐惧（即100%的平静），最右端表示100%的恐惧。
    KeyboardComponent with_intro_5_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent with_intro_5_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent with_intro_5_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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    PolygonComponent with_intro_5_cont_fix_line
      fillColor = white
      pos = (0, -0.1)
      shape = rectangle
      size = (0.5, 0.005)
      startVal [time (s)] = 0
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  Routine with_intro_7
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    TextComponent with_intro_7_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        面孔消失后，您需要尽快对与面孔相符的情绪程度做出标记，
        在横线区域内移动鼠标（无需单击）即可沿线移动滑块，
        当移动到目标程度的位置时，点击鼠标左键即可完成判断。
    KeyboardComponent with_intro_7_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent with_intro_7_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent with_intro_7_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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    PolygonComponent with_intro_7_marker
      fillColor = white
      pos = (0.1, -0.1)
      shape = rectangle
      size = (0.01, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent with_intro_7_cont_fix_line
      fillColor = white
      pos = (0, -0.1)
      shape = rectangle
      size = (0.5, 0.005)
      startVal [time (s)] = 0
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  Routine with_intro_8
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    TextComponent with_intro_8_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        祝贺你！你已经了解了这一部分的实验程序。
        现在我们来练习一下。您需要对一系列图片进行情绪判断。
    KeyboardComponent with_intro_8_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_wo_mix_fix
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    TextComponent prac_wo_mix_fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine prac_wo_mix_face
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    ImageComponent prac_wo_mix_face_image
      image [set every repeat] = $mixprac
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine prac_wo_mix_cate_resp
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    TextComponent prac_wo_mix_cate_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪类别
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    PolygonComponent prac_wo_mix_cate_resp_rect_left
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    PolygonComponent prac_wo_mix_cate_resp_rect_right
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    TextComponent prac_wo_mix_cate_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent prac_wo_mix_cate_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent prac_wo_mix_cate_resp_mouse
      clickable = prac_wo_mix_cate_resp_left_calm, prac_wo_mix_cate_resp_right_fear
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent prac_wo_mix_cate_resp_code
      Code Type = Py
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      Begin Routine:
        # 设置Rectangle的初始状态为不可见
        prac_wo_mix_cate_resp_rect_left.opacity = 0
        prac_wo_mix_cate_resp_rect_right.opacity = 0

        prac_wo_mix_cate_resp_mouse.setPos((0, 0))

        ################################

        # 检查当前试次应该运行的例程
        if prac_wo_mix.thisTrial['prac_mix_type'] == 'prac_wo_mix_cate_resp':
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        # 检测鼠标是否悬停在左边单词上方
        if prac_wo_mix_cate_resp_left_calm.contains(prac_wo_mix_cate_resp_mouse):
            prac_wo_mix_cate_resp_rect_left.opacity = 1  # 设置左边Rectangle可见
        else:
            prac_wo_mix_cate_resp_rect_left.opacity = 0  # 设置左边Rectangle不可见

        # 检测鼠标是否悬停在右边单词上方
        if prac_wo_mix_cate_resp_right_fear.contains(prac_wo_mix_cate_resp_mouse):
            prac_wo_mix_cate_resp_rect_right.opacity = 1  # 设置右边Rectangle可见
        else:
            prac_wo_mix_cate_resp_rect_right.opacity = 0  # 设置右边Rectangle不可见

        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine prac_wo_mix_cont_resp
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    TextComponent prac_wo_mix_cont_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪程度
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    PolygonComponent prac_wo_mix_cont_resp_slider_shape
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent prac_wo_mix_cont_resp_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    TextComponent prac_wo_mix_cont_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent prac_wo_mix_cont_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent prac_wo_mix_cont_resp_mouse
      clickable = prac_wo_mix_cont_resp_slider_shape
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent prac_wo_mix_cont_resp_code
      Code Type = Py
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      Begin Routine:
        # Change the following parameters according to your own exp
        slider_width = 0.5
        slider_height = .05
        slider_orientation = 0
        slider_ticks=[0, 1]
        slider_granularity = .1
        slider_decimals = 2
        prac_wo_mix_cont_resp_slider.decimals = 2
        # 获取Slider组件的标记（marker）
        marker = prac_wo_mix_cont_resp_slider.marker
        # 将标记的形状更改为一个特定尺寸的方块
        marker.shape = 'square'
        marker.size = (0.01, 0.05)  # 设置方块的尺寸
        # Begin Routine
        slider_data=[]

        # record the current position of the mouse
        mouseRec=prac_wo_mix_cont_resp_mouse.getPos()

        prac_wo_mix_cont_resp_mouse.setPos((0, 0))

        ################################

        # 检查当前试次应该运行的例程
        if prac_wo_mix.thisTrial['prac_mix_type'] == 'prac_wo_mix_cont_resp':
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        if prac_wo_mix_cont_resp_slider_shape.contains(prac_wo_mix_cont_resp_mouse) and prac_wo_mix_cont_resp_mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
            mouseRec = prac_wo_mix_cont_resp_mouse.getPos()
            prac_wo_mix_cont_resp_slider.markerPos = mouseRec[slider_orientation]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2

            # (new)Record marker position only on left mouse click
            slider_data.append([round(prac_wo_mix_cont_resp_slider.markerPos, slider_decimals)])


        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine prac_wo_end
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    TextComponent prac_wo_end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        练习部分到此为止。
        如果您有任何疑问，请咨询实验员。
        如果您已经准备好，请按键盘“enter”键开始正式实验。
    KeyboardComponent prac_wo_end_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine wo_mix_begin
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    TextComponent wo_mix_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = 按空格键开始
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    KeyboardComponent wo_mix_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wo_mix_fix
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    TextComponent wo_mix_fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent wo_mix_fix_Init_trial
      Code Type = Py
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      Begin Experiment:
        trialID = 0
      Begin Routine:
        block_name = 'mix_unanticipated'
  Routine wo_mix_face
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    ImageComponent wo_mix_face_image
      image [set every repeat] = $mix
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent wo_mix_face_code
      Code Type = Auto->JS
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      End Routine:
        trialID = trialID + 1

        thisExp.addData('trialID', trialID)
  Routine wo_mix_cate_resp
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    TextComponent wo_mix_cate_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪类别
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    PolygonComponent wo_mix_cate_resp_rect_left
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    PolygonComponent wo_mix_cate_resp_rect_right
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    TextComponent wo_mix_cate_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent wo_mix_cate_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent wo_mix_cate_resp_mouse
      clickable = wo_mix_cate_resp_left_calm, wo_mix_cate_resp_right_fear
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent wo_mix_cate_resp_code
      Code Type = Py
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      Begin Routine:
        # 设置Rectangle的初始状态为不可见
        wo_mix_cate_resp_rect_left.opacity = 0
        wo_mix_cate_resp_rect_right.opacity = 0

        wo_mix_cate_resp_mouse.setPos((0, 0))

        ################################

        # 检查当前试次应该运行的例程
        if wo_mix.thisTrial['mix_type'] == 'wo_mix_cate_resp':
            continueRoutine = True
        else:
            continueRoutine = False

        cate_resp = 'null'
      Each Frame:
        # 检测鼠标是否悬停在左边单词上方
        if wo_mix_cate_resp_left_calm.contains(wo_mix_cate_resp_mouse):
            wo_mix_cate_resp_rect_left.opacity = 1  # 设置左边Rectangle可见
        else:
            wo_mix_cate_resp_rect_left.opacity = 0  # 设置左边Rectangle不可见

        # 检测鼠标是否悬停在右边单词上方
        if wo_mix_cate_resp_right_fear.contains(wo_mix_cate_resp_mouse):
            wo_mix_cate_resp_rect_right.opacity = 1  # 设置右边Rectangle可见
        else:
            wo_mix_cate_resp_rect_right.opacity = 0  # 设置右边Rectangle不可见

        # 检测鼠标点击事件
        if wo_mix_cate_resp_mouse.getPressed()[0]:
            # 检测鼠标点击是否在左边单词上方
            if wo_mix_cate_resp_left_calm.contains(wo_mix_cate_resp_mouse):
                cate_resp = 0  # 记录被试选择左边单词
            # 检测鼠标点击是否在右边单词上方
            elif wo_mix_cate_resp_right_fear.contains(wo_mix_cate_resp_mouse):
                cate_resp = 1  # 记录被试选择右边单词
            else:
                cate_resp = 'None'
        else:
            cate_resp = 'None'


        win.mouseVisible = True
      End Routine:
        thisExp.addData('Anticipation', block_name)
        thisExp.addData('face_stim', mix)
        thisExp.addData('cate_resp', cate_resp)

        #thisExp.addData('block_mix_type', mix_type)
        thisExp.addData('Thinking', thinking)
        win.mouseVisible = False
  Routine wo_mix_cont_resp
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    TextComponent wo_mix_cont_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪程度
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    PolygonComponent wo_mix_cont_resp_slider_shape
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent wo_mix_cont_resp_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    TextComponent wo_mix_cont_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent wo_mix_cont_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent wo_mix_cont_resp_mouse
      clickable = wo_mix_cont_resp_slider_shape
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent wo_mix_cont_resp_code
      Code Type = Py
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      Begin Routine:
        # Change the following parameters according to your own exp
        slider_width = 0.5
        slider_height = .05
        slider_orientation = 0
        #Failing to set ticks or labels in code
        slider_ticks=[0, 1]

        slider_granularity = .1
        slider_decimals = 2
        wo_mix_cont_resp_slider.decimals = 2
        # 获取Slider组件的标记（marker）
        marker = wo_mix_cont_resp_slider.marker
        # 将标记的形状更改为一个特定尺寸的方块
        marker.shape = 'square'
        marker.size = (0.01, 0.05)  # 设置方块的尺寸

        # record the current position of the mouse
        mouseRec=wo_mix_cont_resp_mouse.getPos()

        wo_mix_cont_resp_mouse.setPos((0, 0))

        ################################

        # 检查当前试次应该运行的例程
        if wo_mix.thisTrial['mix_type'] == 'wo_mix_cont_resp':
            continueRoutine = True
        else:
            continueRoutine = False

        cont_resp = 'null'
      Each Frame:
        # Create a slider_shape in this routine with the same size as the slider
        # Check if mouse is moving within slider_shape, if so change marker position accordingly
        if wo_mix_cont_resp_slider_shape.contains(wo_mix_cont_resp_mouse):
            mouseRec = wo_mix_cont_resp_mouse.getPos()
            wo_mix_cont_resp_slider.markerPos = mouseRec[slider_orientation]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2
            # (new)Record marker position only on left mouse click
            if wo_mix_cont_resp_mouse.getPressed()[0]:
                cont_resp = round(wo_mix_cont_resp_slider.markerPos, slider_decimals)
            else:
                cont_resp = 'None'
        else:
            cont_resp = 'None'


        win.mouseVisible = True
      End Routine:
        thisExp.addData('Anticipation', block_name)
        thisExp.addData('face_stim', mix)
        thisExp.addData('cont_resp',cont_resp)

        #thisExp.addData('block_mix_type', mix_type)
        thisExp.addData('Thinking', thinking)
        win.mouseVisible = False
  Routine intro_2
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    TextComponent intro_2_text
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        首先，您会看到一个短暂呈现的面孔图片，例如下图。
        请注意，您可能会看到同一个人出现多次，但不一定是同样的表情，
        您只需要对当前呈现的面孔情绪做出判断。
    KeyboardComponent intro_2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent intro_2_image
      image = stimuli/m_y50f_10.bmp
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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  Routine intro_3
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    TextComponent intro_3_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        接着，您可能会进行2种判断任务中的一种。
        1.分类判断：
        面孔消失后，如果您看到‘恐惧’和‘平静’两个文字（如下所示），
        这表示您需要对刚才呈现的面孔图片进行分类情绪判断，
        即从"恐惧"或"平静"两个选项中任选其一。
    KeyboardComponent intro_3_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent intro_3_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent intro_3_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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  Routine with_intro_1
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    TextComponent with_intro_1_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        类似于之前的实验，您将看到很多面孔图片，每次一张。
        您的任务是判断每张面孔图片表达的情绪。

        按空格键查看更多说明。
    KeyboardComponent with_intro_1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent with_intro_1_code
      Code Type = Py
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      Begin Experiment:
        win.mouseVisible = False
      Each Frame:
        win.mouseVisible = False
  Routine with_intro_6
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    TextComponent with_intro_6_text
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        接着，您会看到一个短暂呈现的面孔图片，例如下图。
        请注意，您可能会看到同一个人出现多次，但不一定是同样的表情，
        您只需要对当前呈现的面孔情绪做出判断。
    KeyboardComponent with_intro_6_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent with_intro_6_image
      image = stimuli/m_y28m_70.bmp
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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  Routine prac_with_begin
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    TextComponent prac_with_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        请对接下来呈现的图片进行分类或连续判断，

        如果您看到‘恐惧’和‘平静’两个文字，
        这表示您需要对接下来呈现的面孔图片进行分类情绪判断，
        如果您看到‘恐惧’和‘平静’两个文字且中间有一条横线，
        这表示您需要对接下来呈现的面孔图片进行连续情绪判断。

        准备好按空格键开始。
    KeyboardComponent prac_with_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_with_begin_2
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    TextComponent prac_with_begin_2_text
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        分类判断练习完成。接下来将进行连续判断的练习。
        面孔消失后，尽快在横线区域内移动鼠标，
        当移动到目标程度位置时，点击鼠标左键完成判断。

        准备好后按键盘方向键右键“>”开始。
    KeyboardComponent prac_with_begin_2_key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_6
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    TextComponent intro_6_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        您需要尽快对与面孔相符的情绪程度做出标记，
        在横线区域内移动鼠标（无需单击）即可沿线移动滑块，
        当移动到目标程度的位置时，点击鼠标左键即可完成判断。
    KeyboardComponent intro_6_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent intro_6_left_calm
      letterHeight = 0.03
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent intro_6_right_fear
      letterHeight = 0.03
      pos = (0.3, -0.1)
      startVal [time (s)] = 0
      text = 恐惧
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    PolygonComponent intro_6_marker
      fillColor = white
      pos = (0.1, -0.1)
      shape = rectangle
      size = (0.01, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_6_cont_fix_line
      fillColor = white
      pos = (0, -0.1)
      shape = rectangle
      size = (0.5, 0.005)
      startVal [time (s)] = 0
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  Routine intro_7
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    TextComponent intro_7_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        祝贺你！你已经了解了实验程序。
        现在我们来练习一下。您需要对一系列图片进行情绪判断。

        准备好按空格键开始。
    KeyboardComponent intro_7_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_wo_mix_begin
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    TextComponent prac_wo_mix_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = 按空格键开始
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    KeyboardComponent prac_wo_mix_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine formal_wo_end
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    TextComponent formal_wo_end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        第一部分的实验到此为止。恭喜你已经完成了整个实验的50%。
        请您稍事休息。
        如果您已经准备好，请按键盘“enter”键继续第二部分的实验。
    KeyboardComponent formal_wo_end_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine wo_mix_brea
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    TextComponent wo_mix_brea_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在，请您稍事休息，
        当您感觉准备好继续实验时，
        请按下“enter”键继续进行实验任务。
    KeyboardComponent wo_mix_brea_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent wo_mix_brea_code
      Code Type = Auto->JS
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      Begin Routine:
        if trialID == 50:
            continueRoutine = True
        else:
            continueRoutine = False
  Routine prac_with_mix_cate_fix
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    TextComponent prac_with_mix_cate_fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent prac_with_mix_cate_fix_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.0
      text = 平静
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    TextComponent prac_with_mix_cate_fix_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = 恐惧
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    CodeComponent prac_with_mix_cate_fix_code
      Code Type = Auto->JS
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      Begin Routine:
        # 检查当前试次应该运行的例程
        if prac_with_mix.thisTrial['with_prac_mix_type'] == 'prac_with_mix_cate_resp':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine prac_with_mix_begin
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    TextComponent prac_with_mix_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = 按空格键开始
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    KeyboardComponent prac_with_mix_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_with_mix_cont_fix
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    TextComponent prac_with_mix_cont_fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent prac_with_mix_cont_fix_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.0
      text = 平静
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    TextComponent prac_with_mix_cont_fix_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = 恐惧
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    PolygonComponent prac_with_mix_cont_fix_line
      fillColor = white
      shape = rectangle
      size = (0.5, 0.005)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    CodeComponent prac_with_mix_cont_fix_code
      Code Type = Auto->JS
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      Begin Routine:
        # 检查当前试次应该运行的例程
        if prac_with_mix.thisTrial['with_prac_mix_type'] == 'prac_with_mix_cont_resp':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine prac_with_mix_face
    RoutineSettingsComponent prac_with_mix_face
      saveStartStop = False
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    ImageComponent prac_with_mix_face_image
      image [set every repeat] = $with_prac_mix
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine prac_with_mix_cate_resp
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    TextComponent prac_with_mix_cate_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪类别
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    PolygonComponent prac_with_mix_cate_resp_rect_left
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    PolygonComponent prac_with_mix_cate_resp_rect_right
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    TextComponent prac_with_mix_cate_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent prac_with_mix_cate_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent prac_with_mix_cate_resp_mouse
      clickable = prac_with_mix_cate_resp_left_calm, prac_with_mix_cate_resp_right_fear
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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    CodeComponent prac_cate_resp_code
      Code Type = Py
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      Begin Experiment:
        # 在 'Begin Experiment' 代码框中
        win.mouseVisible = False
      Begin Routine:
        # 设置Rectangle的初始状态为不可见
        prac_with_mix_cate_resp_rect_left.opacity = 0
        prac_with_mix_cate_resp_rect_right.opacity = 0

        # 在您的循环之前，设置鼠标的初始位置（在屏幕中心）
        prac_with_mix_cate_resp_mouse.setPos((0, 0))

        # 检查当前试次应该运行的例程
        if prac_with_mix.thisTrial['with_prac_mix_type'] == 'prac_with_mix_cate_resp':
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        # 检测鼠标是否悬停在左边单词上方
        if prac_with_mix_cate_resp_left_calm.contains(prac_with_mix_cate_resp_mouse):
            prac_with_mix_cate_resp_rect_left.opacity = 1  # 设置左边Rectangle可见
        else:
            prac_with_mix_cate_resp_rect_left.opacity = 0  # 设置左边Rectangle不可见

        # 检测鼠标是否悬停在右边单词上方
        if prac_with_mix_cate_resp_right_fear.contains(prac_with_mix_cate_resp_mouse):
            prac_with_mix_cate_resp_rect_right.opacity = 1  # 设置右边Rectangle可见
        else:
            prac_with_mix_cate_resp_rect_right.opacity = 0  # 设置右边Rectangle不可见

        # 检测鼠标点击事件
        if prac_with_mix_cate_resp_mouse.getPressed()[0]:
            # 检测鼠标点击是否在左边单词上方
            if prac_with_mix_cate_resp_left_calm.contains(prac_with_mix_cate_resp_mouse):
                response = '0'  # 记录被试选择左边单词
            # 检测鼠标点击是否在右边单词上方
            elif prac_with_mix_cate_resp_right_fear.contains(prac_with_mix_cate_resp_mouse):
                response = '1'  # 记录被试选择右边单词


        #mouse.setVisible(True)  # 显示鼠标
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine prac_with_mix_cont_resp
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    TextComponent prac_with_mix_cont_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪程度
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    PolygonComponent prac_with_mix_cont_resp_slider_shape
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.6, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent prac_with_mix_cont_resp_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    TextComponent prac_with_mix_cont_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent prac_with_mix_cont_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent prac_with_mix_cont_resp_mouse
      clickable = prac_with_mix_cont_resp_slider_shape
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent prac_with_mix_cont_resp_code
      Code Type = Py
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      Begin Routine:
        # Change the following parameters according to your own exp
        slider_width = 0.5
        slider_height = .05
        slider_orientation = 0
        #Failing to set ticks or labels in code
        slider_ticks=[0, 1]

        slider_granularity = 0
        slider_decimals = 2

        prac_with_mix_cont_resp_slider.decimals = 2

        # 获取Slider组件的标记（marker）
        marker = prac_with_mix_cont_resp_slider.marker
        # 将标记的形状更改为一个特定尺寸的方块
        marker.shape = 'square'
        marker.size = (0.01, 0.05)  # 设置方块的尺寸

        # create an empty list to store data
        slider_data=[]

        # record the current position of the mouse
        mouseRec=prac_with_mix_cont_resp_mouse.getPos()

        prac_with_mix_cont_resp_mouse.setPos((0, 0))

        # 检查当前试次应该运行的例程
        if prac_with_mix.thisTrial['with_prac_mix_type'] == 'prac_with_mix_cont_resp':
            continueRoutine = True
        else:
            continueRoutine = False
      Each Frame:
        # Create a slider_shape in this routine with the same size as the slider
        # Check if mouse is moving within slider_shape, if so change marker position accordingly
        if prac_with_mix_cont_resp_slider_shape.contains(prac_with_mix_cont_resp_mouse) and prac_with_mix_cont_resp_mouse.getPos()[slider_orientation] != mouseRec[slider_orientation]:
            mouseRec = prac_with_mix_cont_resp_mouse.getPos()
            prac_with_mix_cont_resp_slider.markerPos = mouseRec[slider_orientation]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2

            # (new)Record marker position only on left mouse click
            slider_data.append([round(prac_with_mix_cont_resp_slider.markerPos, slider_decimals)])


        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine with_mix_cate_resp
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    TextComponent with_mix_cate_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪类别
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    PolygonComponent with_mix_cate_resp_rect_left
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    PolygonComponent with_mix_cate_resp_rect_right
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (0.15, 0.1)
      startVal [time (s)] = 0
      vertices = [[0,0],[0,1],[1.5,1],[1.5,0]]
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    TextComponent with_mix_cate_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent with_mix_cate_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent with_mix_cate_resp_mouse
      clickable = with_mix_cate_resp_left_calm, with_mix_cate_resp_right_fear
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent with_mix_cate_resp_code
      Code Type = Py
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      Begin Routine:
        # 设置Rectangle的初始状态为不可见
        with_mix_cate_resp_rect_left.opacity = 0
        with_mix_cate_resp_rect_right.opacity = 0

        with_mix_cate_resp_mouse.setPos((0, 0))

        # 检查当前试次应该运行的例程
        if with_mix.thisTrial['with_mix_type'] == 'with_mix_cate_resp':
            continueRoutine = True
        else:
            continueRoutine = False

        cate_resp = 'null'
      Each Frame:
        # 检测鼠标是否悬停在左边单词上方
        if with_mix_cate_resp_left_calm.contains(with_mix_cate_resp_mouse):
            with_mix_cate_resp_rect_left.opacity = 1  # 设置左边Rectangle可见
        else:
            with_mix_cate_resp_rect_left.opacity = 0  # 设置左边Rectangle不可见

        # 检测鼠标是否悬停在右边单词上方
        if with_mix_cate_resp_right_fear.contains(with_mix_cate_resp_mouse):
            with_mix_cate_resp_rect_right.opacity = 1  # 设置右边Rectangle可见
        else:
            with_mix_cate_resp_rect_right.opacity = 0  # 设置右边Rectangle不可见

        # 检测鼠标点击事件
        if with_mix_cate_resp_mouse.getPressed()[0]:
            # 检测鼠标点击是否在左边单词上方
            if with_mix_cate_resp_left_calm.contains(with_mix_cate_resp_mouse):
                cate_resp = 0  # 记录被试选择左边单词
            # 检测鼠标点击是否在右边单词上方
            elif with_mix_cate_resp_right_fear.contains(with_mix_cate_resp_mouse):
                cate_resp = 1  # 记录被试选择右边单词
            else:
                cate_resp = 'None'
        else:
            cate_resp = 'None'


        win.mouseVisible = True
      End Routine:
        #trialID = trialID + 1

        thisExp.addData('Anticipation', block_name)
        #thisExp.addData('trialID', trialID)
        thisExp.addData('face_stim', mix)
        thisExp.addData('cate_resp', cate_resp)
        thisExp.addData('Thinking', thinking)

        win.mouseVisible = False
  Routine with_mix_cont_resp
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    TextComponent with_mix_cont_resp_prompt
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请选择情绪程度
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    PolygonComponent with_mix_cont_resp_slider_shape
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.07)
      startVal [time (s)] = 0.0
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    SliderComponent with_mix_cont_resp_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
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    TextComponent with_mix_cont_resp_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0
      text = 平静
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    TextComponent with_mix_cont_resp_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 0
      text = 恐惧
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    MouseComponent with_mix_cont_resp_mouse
      clickable = with_mix_cont_resp_slider_shape
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent with_mix_cont_resp_code
      Code Type = Py
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      Begin Routine:
        # Change the following parameters according to your own exp
        slider_width = 0.5
        slider_height = .05
        slider_orientation = 0
        #Failing to set ticks or labels in code
        slider_ticks=[0, 1]

        slider_granularity = .1
        slider_decimals = 2
        with_mix_cont_resp_slider.decimals = 2
        # 获取Slider组件的标记（marker）
        marker = with_mix_cont_resp_slider.marker
        # 将标记的形状更改为一个特定尺寸的方块
        marker.shape = 'square'
        marker.size = (0.01, 0.05)  # 设置方块的尺寸
        # Begin Routine

        # record the current position of the mouse
        mouseRec=with_mix_cont_resp_mouse.getPos()

        with_mix_cont_resp_mouse.setPos((0, 0))

        # 检查当前试次应该运行的例程
        if with_mix.thisTrial['with_mix_type'] == 'with_mix_cont_resp':
            continueRoutine = True
        else:
            continueRoutine = False

        cont_resp = 'null'
      Each Frame:
        # Create a slider_shape in this routine with the same size as the slider
        # Check if mouse is moving within slider_shape, if so change marker position accordingly
        if with_mix_cont_resp_slider_shape.contains(with_mix_cont_resp_mouse):
            mouseRec = with_mix_cont_resp_mouse.getPos()
            with_mix_cont_resp_slider.markerPos = mouseRec[slider_orientation]/slider_width*(slider_ticks[-1]-slider_ticks[0])+(slider_ticks[0]+slider_ticks[-1])/2
            # (new)Record marker position only on left mouse click
            if with_mix_cont_resp_mouse.getPressed()[0]:
                cont_resp = round(with_mix_cont_resp_slider.markerPos, slider_decimals)
            else:
                cont_resp = 'None'
        else:
            cont_resp = 'None'

        win.mouseVisible = True
      End Routine:
        #trialID = trialID + 1

        thisExp.addData('Anticipation', block_name)
        #thisExp.addData('trialID', trialID)
        thisExp.addData('face_stim', mix)

        #thisExp.addData('All Responses',slider_data)
        thisExp.addData('cont_resp',cont_resp)
        thisExp.addData('Thinking', thinking)

        print('cont_resp',cont_resp)

        win.mouseVisible = False
  Routine with_mix_face
    RoutineSettingsComponent with_mix_face
      saveStartStop = False
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    ImageComponent with_mix_face_image
      image [set every repeat] = $mix
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine with_mix_cont_fix
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    TextComponent with_mix_cont_fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent with_mix_cont_fix_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.0
      text = 平静
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    TextComponent with_mix_cont_fix_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = 恐惧
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    PolygonComponent with_mix_cont_fix_line
      fillColor = white
      shape = rectangle
      size = (0.5, 0.005)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    CodeComponent with_mix_cont_fix_Init_trial
      Code Type = Py
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      Begin Routine:
        # 检查当前试次应该运行的例程
        if with_mix.thisTrial['with_mix_type'] == 'with_mix_cont_resp':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine with_mix_cate_fix
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    TextComponent with_mix_cate_fix_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent with_mix_cate_fix_left_calm
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3.0
      text = 平静
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    TextComponent with_mix_cate_fix_right_fear
      letterHeight = 0.03
      pos = (0.3, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = 恐惧
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    CodeComponent with_mix_cate_fix_Init_trial
      Code Type = Py
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      Begin Experiment:
        trialID = 0
      Begin Routine:
        # 检查当前试次应该运行的例程
        if with_mix.thisTrial['with_mix_type'] == 'with_mix_cate_resp':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine with_mix_brea
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    TextComponent with_brea_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在，请您稍事休息，
        当您感觉准备好继续实验时，
        请按下“enter”键继续进行实验任务。
    KeyboardComponent with_brea_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent with_mix_brea_code
      Code Type = Auto->JS
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      Begin Routine:
        if trialID == 150:
            continueRoutine = True
        else:
            continueRoutine = False
  Routine with_mix_begin
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    TextComponent with_mix_begin_text
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = 按空格键开始
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    KeyboardComponent with_mix_begin_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent with_mix_begin_code
      Code Type = Auto->JS
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      Begin Routine:
        trialID = trialID + 1

        thisExp.addData('trialID', trialID)

        block_name = 'mix_anticipated'
Flow
  Routine intro
  Routine intro_2
  Routine intro_3
  Routine intro_4
  Routine intro_5
  Routine intro_6
  Routine intro_7
  LoopInitiator prac_wo_mix loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = pics - 4.5.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'S2praccate1cont2': 'Stimuli/m_y28m_10.bmp', 'S2praccont1cate2': 'Stimuli/m_y59f_10.bmp', 'with_prac_mix': 'Stimuli/m_y28m_10.bmp', 'with_prac_mix_type': 'prac_with_mix_cate_resp', 'mixprac': 'Stimuli/m_y29m_10.bmp', 'prac_mix_type': 'prac_wo_mix_cate_resp', 'mix': 'Stimuli/m_y14f_10.bmp', 'mix_type': 'wo_mix_cate_resp', 'with_mix_type': 'with_mix_cate_resp', 'thinking': 'categorical'},
      {'S2praccate1cont2': 'Stimuli/m_y50f_30.bmp', 'S2praccont1cate2': 'Stimuli/m_y29m_70.bmp', 'with_prac_mix': 'Stimuli/m_y50f_30.bmp', 'with_prac_mix_type': 'prac_with_mix_cate_resp', 'mixprac': 'Stimuli/m_y29m_30.bmp', 'prac_mix_type': 'prac_wo_mix_cate_resp', 'mix': 'Stimuli/m_y14f_30.bmp', 'mix_type': 'wo_mix_cate_resp', 'with_mix_type': 'with_mix_cate_resp', 'thinking': 'categorical'},
      {'S2praccate1cont2': 'Stimuli/m_y28m_90.bmp', 'S2praccont1cate2': 'Stimuli/m_y59f_90.bmp', 'with_prac_mix': 'Stimuli/m_y28m_90.bmp', 'with_prac_mix_type': 'prac_with_mix_cate_resp', 'mixprac': 'Stimuli/m_y29m_50.bmp', 'prac_mix_type': 'prac_wo_mix_cate_resp', 'mix': 'Stimuli/m_y14f_50.bmp', 'mix_type': 'wo_mix_cate_resp', 'with_mix_type': 'with_mix_cate_resp', 'thinking': 'categorical'},
      {'S2praccate1cont2': None, 'S2praccont1cate2': None, 'with_prac_mix': 'Stimuli/m_y59f_10.bmp', 'with_prac_mix_type': 'prac_with_mix_cont_resp', 'mixprac': 'Stimuli/m_y50f_50.bmp', 'prac_mix_type': 'prac_wo_mix_cont_resp', 'mix': 'Stimuli/m_y14f_70.bmp', 'mix_type': 'wo_mix_cate_resp', 'with_mix_type': 'with_mix_cate_resp', 'thinking': 'categorical'}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
    Routine prac_wo_mix_begin
    Routine prac_wo_mix_fix
    Routine prac_wo_mix_face
    Routine prac_wo_mix_cate_resp
    Routine prac_wo_mix_cont_resp
  LoopTerminator prac_wo_mix
  Routine prac_wo_end
  LoopInitiator wo_mix loopType="TrialHandler"
    conditionsFile = pics - 4.5.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine wo_mix_begin
    Routine wo_mix_fix
    Routine wo_mix_face
    Routine wo_mix_cate_resp
    Routine wo_mix_cont_resp
    Routine wo_mix_brea
  LoopTerminator wo_mix
  Routine formal_wo_end
  Routine with_intro_1
  Routine with_intro_2
  Routine with_intro_3
  Routine with_intro_4
  Routine with_intro_5
  Routine with_intro_6
  Routine with_intro_7
  Routine with_intro_8
  Routine prac_with_begin
  LoopInitiator prac_with_mix loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = pics - 4.5.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine prac_with_mix_begin
    Routine prac_with_mix_cate_fix
    Routine prac_with_mix_cont_fix
    Routine prac_with_mix_face
    Routine prac_with_mix_cate_resp
    Routine prac_with_mix_cont_resp
  LoopTerminator prac_with_mix
  Routine prac_end
  LoopInitiator with_mix loopType="TrialHandler"
    conditionsFile = pics - 4.5.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine with_mix_begin
    Routine with_mix_cate_fix
    Routine with_mix_cont_fix
    Routine with_mix_face
    Routine with_mix_cate_resp
    Routine with_mix_cont_resp
    Routine with_mix_brea
  LoopTerminator with_mix
  Routine end_exp
