PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'gender': "['female', 'male']", 'handedness': "['right', 'left']", 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = reverse correlation2
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  rush = True
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Routines
  Routine rest
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    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 按“空格”键继续
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    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_all
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    ImageComponent instruction_all_image
      image = Instruction/Instruction_all.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent instruction_all_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_rest
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    TextComponent practice_rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 按“空格“键继续
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    KeyboardComponent practice_rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_block
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    TextComponent practice_block_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        练习结束

        您有一分钟休息

        按空格进入正式实验
    KeyboardComponent practice_block_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_practice_3
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    TextComponent text_instruction_practice_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        在该任务中
        您需要判断两张面孔中
        哪一张面孔的情绪更偏向中性
        并拖动鼠标至您认为的“偏向中性情绪的程度”

        按空格继续
    KeyboardComponent key_resp_instruction_practice_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_practice_4
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    TextComponent text_instruction_practice_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        请拖动鼠标调整标记位置：

        靠近左图表示左图更中性

        靠近右图表示右图更中性

        离中心越远，中性程度越强

        按空格开始
    KeyboardComponent key_resp_instruction_practice_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_continuous_rect
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    PolygonComponent practice_continuous_rating_marker
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent practice_continuous_rating_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请左右拖动鼠标至您认为的合适位置后按下左键
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    SliderComponent practice_continuous_rating_slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1)
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    MouseComponent practice_continuous_rating_mouse
      clickable = practice_continuous_rating_marker
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent practice_continuous_rating_code
      Code Type = Py
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      Begin Routine:
        # --- 初始化评分参数 ---
        practice_continuous_rating_slider_width = 0.5       # 滑块宽度（相对单位）
        practice_continuous_rating_slider_height = 0.05      # 滑块高度
        practice_continuous_rating_slider_orientation = 0    # 滑块方向（0：水平）
        practice_continuous_rating_slider_ticks = [0, 1]       # 滑块刻度
        practice_continuous_rating_slider_granularity = 0.1    # 滑块精度
        practice_continuous_rating_slider_decimals = 2         # 显示小数位数

        # --- 设置滑块样式 ---
        practice_continuous_rating_slider.decimals = practice_continuous_rating_slider_decimals
        marker = practice_continuous_rating_slider.marker
        marker.shape = 'square'                   # 标记形状为方形
        marker.size = (0.01, 0.05)                # 标记大小

        # --- 初始化变量 ---
        start_time = core.getTime() # 当前例程起始时间
        practice_continuous_rating_rt = None                        # 记录响应时间
        practice_continuous_rating = None # 连续响应值

        print("practice_continuous_rating 的类型是:", type(practice_continuous_rating))

        print(trialID)

        mouseRec = practice_continuous_rating_mouse.getPos()
        practice_continuous_rating_mouse.setPos((0, 0))

        has_moved = False

        #####反馈设置初始化#####
        feedback_pic_list = ['Instruction/right_fear.png','Instruction/left_fear.png']
        feedback_text = 0
        feedback_point = 0
        feedback_pic = randchoice(feedback_pic_list)
      Each Frame:
        # 实时更新 marker 位置
        mouse_Rec = practice_continuous_rating_mouse.getPos()
        if practice_continuous_rating_marker.contains(practice_continuous_rating_mouse):
           if mouse_Rec[0] != 0:
                has_moved = True
           practice_continuous_rating_slider.markerPos = mouse_Rec[practice_continuous_rating_slider_orientation] / practice_continuous_rating_slider_width * (practice_continuous_rating_slider_ticks[-1]-practice_continuous_rating_slider_ticks[0]) + (practice_continuous_rating_slider_ticks[0]+practice_continuous_rating_slider_ticks[-1]) / 2
           if practice_continuous_rating_mouse.getPressed()[0] and has_moved:
               practice_continuous_rating = round(practice_continuous_rating_slider.markerPos, practice_continuous_rating_slider_decimals)
               if practice_continuous_rating_rt is None:  # 仅记录第一次点击的反应时
                    practice_continuous_rating_rt = core.getTime() - start_time
           else:
               practice_continuous_rating = None
        elif mouse_Rec[0] > 0.25:
            practice_continuous_rating_mouse.setPos((0.25, 0))
        elif mouse_Rec[0] < -0.25:
            practice_continuous_rating_mouse.setPos((-0.25, 0))
        win.mouseVisible = False

        feedback_point = int((practice_continuous_rating_slider.markerPos - 0.5)*200)
        if feedback_point  > 0:
            feedback_pic = feedback_pic_list[0]
            feedback_text = abs(feedback_point)
        elif feedback_point  < 0:
            feedback_pic = feedback_pic_list[1]
            feedback_text = abs(feedback_point)

        if gotValidClick and has_moved:
            continueRoutine = False
        else:
            gotValidClick = False
      End Routine:
        # 创建新变量side_chosen
        if practice_continuous_rating_mouse.x:  # 检查是否有鼠标数据
            # 取最后一次记录的x坐标
            last_x = practice_continuous_rating_mouse.x[-1]

            # 判断x值并赋值
            if last_x > 0:
                side_chosen = 1
            elif last_x < 0:
                side_chosen = 0
            else:
                side_chosen = -1  # 处理x=0的情况
        else:
            side_chosen = None  # 无数据时设为空

        #保存数据
        thisExp.addData('practice_continuous_rating_rt', practice_continuous_rating_rt)
        thisExp.addData('practice_continuous_rating', practice_continuous_rating)
        thisExp.addData('Raw_chosen',last_x)#记录原始选择
        thisExp.addData('side_chosen', side_chosen)  # 新增的数据列
        win.mouseVisible = False
    ImageComponent practice_continuous_image_left
      image [set every repeat] = $left_image
      pos [set every repeat] = (-0.57, 0)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent practice_continuous_image_right
      image [set every repeat] = $right_image
      ori [set every repeat] = 0
      pos [set every repeat] = (0.57, 0)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent practice_image_feedback
      image [set every frame] = $feedback_pic
      pos = (-0.05, -0.24)
      saveStartStop = False
      size = (None, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent practice_text_feedback
      color = red
      letterHeight = 0.025
      pos = (0.23, -0.235)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every frame]:
        $feedback_text
  Routine instruction_practice
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    ImageComponent instruction_practice_image
      image = Instruction/Instruction_practice.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = norm
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    KeyboardComponent instruction_practice_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_fear_1
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    TextComponent text_instruction_fear_1
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        接下来，屏幕上会同时呈现两张情绪面孔，
        中心点偏移程度代表您认为图片为“恐惧”的程度

        按空格继续
    KeyboardComponent key_resp_instruction_fear_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine formal_continuous_rect
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    PolygonComponent formal_continuous_rating_marker
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent formal_continuous_rating_text
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = 请左右拖动鼠标至您认为的合适位置后按下左键
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    SliderComponent formal_continuous_rating_slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1)
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    MouseComponent formal_continuous_rating_mouse
      clickable = formal_continuous_rating_marker
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent formal_continuous_rating_code
      Code Type = Py
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      Begin Experiment:
        trialID = 0
        blockID = 1
      Begin Routine:
        # --- 初始化评分参数 ---
        formal_continuous_rating_slider_width = 0.5       # 滑块宽度（相对单位）
        formal_continuous_rating_slider_height = 0.05      # 滑块高度
        formal_continuous_rating_slider_orientation = 0    # 滑块方向（0：水平）
        formal_continuous_rating_slider_ticks = [0, 1]       # 滑块刻度
        formal_continuous_rating_slider_granularity = 0.1    # 滑块精度
        formal_continuous_rating_slider_decimals = 2         # 显示小数位数

        # --- 设置滑块样式 ---
        formal_continuous_rating_slider.decimals = formal_continuous_rating_slider_decimals
        marker = formal_continuous_rating_slider.marker
        marker.shape = 'square'                   # 标记形状为方形
        marker.size = (0.01, 0.05)                # 标记大小

        # --- 初始化变量 ---
        start_time = core.getTime() # 当前例程起始时间
        formal_continuous_rating_rt = None                        # 记录响应时间
        formal_continuous_rating = None # 连续响应值

        print("formal_continuous_rating 的类型是:", type(formal_continuous_rating))

        print(trialID)

        mouseRec = formal_continuous_rating_mouse.getPos()
        formal_continuous_rating_mouse.setPos((0, 0))
        has_moved = False
      Each Frame:
        # 实时更新 marker 位置
        mouse_Rec = formal_continuous_rating_mouse.getPos()
        if formal_continuous_rating_marker.contains(formal_continuous_rating_mouse):
           if mouse_Rec[0] != 0:
                has_moved = True
           formal_continuous_rating_slider.markerPos = mouse_Rec[formal_continuous_rating_slider_orientation] / formal_continuous_rating_slider_width * (formal_continuous_rating_slider_ticks[-1]-formal_continuous_rating_slider_ticks[0]) + (formal_continuous_rating_slider_ticks[0]+formal_continuous_rating_slider_ticks[-1]) / 2
           if formal_continuous_rating_mouse.getPressed()[0]:
               formal_continuous_rating = round(formal_continuous_rating_slider.markerPos, formal_continuous_rating_slider_decimals)
               if formal_continuous_rating_rt is None:  # 仅记录第一次点击的反应时
                    formal_continuous_rating_rt = core.getTime() - start_time
           else:
               formal_continuous_rating = None
        elif mouse_Rec[0] > 0.25:
            formal_continuous_rating_mouse.setPos((0.25, 0))
        elif mouse_Rec[0] < -0.25:
            formal_continuous_rating_mouse.setPos((-0.25, 0))
        win.mouseVisible = False

        if gotValidClick and has_moved:
            continueRoutine = False
        else:
            gotValidClick = False
      End Routine:
        #更新试次
        trialID = trialID + 1
        # 创建新变量side_chosen
        if formal_continuous_rating_mouse.x:  # 检查是否有鼠标数据
            # 取最后一次记录的x坐标
            last_x = formal_continuous_rating_mouse.x[-1]

            # 判断x值并赋值
            if last_x > 0:
                side_chosen = 1
            elif last_x < 0:
                side_chosen = 0
            else:
                side_chosen = -1  # 处理x=0的情况
        else:
            side_chosen = None  # 无数据时设为空

        #保存数据
        thisExp.addData('formal_continuous_rating_rt', formal_continuous_rating_rt)
        thisExp.addData('formal_continuous_rating', formal_continuous_rating)
        thisExp.addData('trialID', trialID)
        thisExp.addData('blockID', blockID)
        thisExp.addData('Raw_chosen',last_x)#记录原始选择
        thisExp.addData('side_chosen', side_chosen)  # 新增的数据列
        win.mouseVisible = False
    ImageComponent formal_continuous_image_left
      image [set every repeat] = $left_image
      pos [set every repeat] = (-0.57, 0)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent formal_continuous_image_right
      image [set every repeat] = $right_image
      ori [set every repeat] = 0
      pos [set every repeat] = (0.57, 0)
      size [set every repeat] = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine instruction_fear_2
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    TextComponent text_instruction_fear_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        在该任务中
        您需要判断两张面孔中
        哪一张面孔的情绪更偏向恐惧
        并拖动鼠标至您认为的
        “偏向恐惧情绪的程度“

        按空格继续
    KeyboardComponent key_resp_instruction_fear_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine formal_continuous_end
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    TextComponent formal_continuous_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        实验结束！谢谢参与！

        按空格退出
    KeyboardComponent formal_continuous_end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fixation_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine instruction_exp
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    ImageComponent instruction_exp_image
      image = Instruction/Instruction_exp.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = norm
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    KeyboardComponent instruction_exp_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_example
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    ImageComponent image_instruction_example
      image = Instruction/Instruction_example.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = norm
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    KeyboardComponent key_resp_instruction_example
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_formal
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    ImageComponent instruction_formal_image
      image = Instruction/Instruction_formal.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = norm
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    KeyboardComponent instruction_formal_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block
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    TextComponent block_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        您有一分钟时间休息

        按“空格”结束休息
    KeyboardComponent block_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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    CodeComponent block_code
      Code Type = Auto->JS
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      Begin Routine:
        print(trialID)
        if trialID in [100,200, 300, 400, 500]:
            continueRoutine = True
        else:
            continueRoutine = False
        print(trialID)
        #if formal_block_trials.thisRepN == 3:  # 如果是第4个block (索引从0开始)
        #   continueRoutine = False  # 直接跳过这个routine，不呈现休息的指导语

        if trialID in [100, 200, 300, 400, 500]:
           blockID = blockID + 1
  Routine instruction_video
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    MovieComponent instruction_video_movie
      backend = ffpyplayer
      disabled = True
      forceEndRoutine = True
      movie = Instruction/Video_Instruction_Continuous.mp4
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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Flow
  Routine instruction_all
  Routine instruction_video
  Routine instruction_exp
  Routine instruction_practice
  LoopInitiator practice_loop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'face_ori': 'sti1/face_chinese_1_00001_ori', 'face_inv': 'sti1/face_chinese_1_00001_inv', 'left_image': 'sti1/face_chinese_1_00001_ori', 'right_image': 'sti1/face_chinese_1_00001_inv'},
      {'face_ori': 'sti1/face_chinese_1_00002_ori', 'face_inv': 'sti1/face_chinese_1_00002_inv', 'left_image': 'sti1/face_chinese_1_00002_inv', 'right_image': 'sti1/face_chinese_1_00002_ori'},
      {'face_ori': 'sti1/face_chinese_1_00003_ori', 'face_inv': 'sti1/face_chinese_1_00003_inv', 'left_image': 'sti1/face_chinese_1_00003_inv', 'right_image': 'sti1/face_chinese_1_00003_ori'},
      {'face_ori': 'sti1/face_chinese_1_00004_ori', 'face_inv': 'sti1/face_chinese_1_00004_inv', 'left_image': 'sti1/face_chinese_1_00004_ori', 'right_image': 'sti1/face_chinese_1_00004_inv'},
      {'face_ori': 'sti1/face_chinese_1_00005_ori', 'face_inv': 'sti1/face_chinese_1_00005_inv', 'left_image': 'sti1/face_chinese_1_00005_ori', 'right_image': 'sti1/face_chinese_1_00005_inv'}]
    Routine fixation
    Routine practice_continuous_rect
    Routine practice_rest
  LoopTerminator practice_loop
  Routine practice_block
  Routine instruction_formal
  LoopInitiator formal_continuous_rating_trials_loop loopType="TrialHandler"
    conditionsFile = stim_formal2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'face_ori': 'sti1/face_chinese_1_00001_ori', 'face_inv': 'sti1/face_chinese_1_00001_inv', 'left_image': 'sti1/face_chinese_1_00001_inv', 'right_image': 'sti1/face_chinese_1_00001_ori', 'num': 1},
      {'face_ori': 'sti1/face_chinese_1_00002_ori', 'face_inv': 'sti1/face_chinese_1_00002_inv', 'left_image': 'sti1/face_chinese_1_00002_ori', 'right_image': 'sti1/face_chinese_1_00002_inv', 'num': 2},
      {'face_ori': 'sti1/face_chinese_1_00003_ori', 'face_inv': 'sti1/face_chinese_1_00003_inv', 'left_image': 'sti1/face_chinese_1_00003_inv', 'right_image': 'sti1/face_chinese_1_00003_ori', 'num': 3},
      {'face_ori': 'sti1/face_chinese_1_00004_ori', 'face_inv': 'sti1/face_chinese_1_00004_inv', 'left_image': 'sti1/face_chinese_1_00004_ori', 'right_image': 'sti1/face_chinese_1_00004_inv', 'num': 4},
      {'face_ori': 'sti1/face_chinese_1_00005_ori', 'face_inv': 'sti1/face_chinese_1_00005_inv', 'left_image': 'sti1/face_chinese_1_00005_ori', 'right_image': 'sti1/face_chinese_1_00005_inv', 'num': 5},
      {'face_ori': 'sti1/face_chinese_1_00006_ori', 'face_inv': 'sti1/face_chinese_1_00006_inv', 'left_image': 'sti1/face_chinese_1_00006_inv', 'right_image': 'sti1/face_chinese_1_00006_ori', 'num': 6},
      {'face_ori': 'sti1/face_chinese_1_00007_ori', 'face_inv': 'sti1/face_chinese_1_00007_inv', 'left_image': 'sti1/face_chinese_1_00007_ori', 'right_image': 'sti1/face_chinese_1_00007_inv', 'num': 7}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
    Routine fixation
    Routine formal_continuous_rect
    Routine rest
    Routine block
  LoopTerminator formal_continuous_rating_trials_loop
  Routine formal_continuous_end
